PsychoPy2experiment version="2024.2.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = psychedeLights_temp
  keyboardBackend = ioHub
  logging level = error
  runMode = 0
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Routines
  Routine fixationRest
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    CodeComponent drawFixation
      Code Type = Py
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      Begin Routine:
        cueCircColor.setAutoDraw(True)
        fixCircMask.setAutoDraw(True)

        clock.reset()
        kb.clock.reset()
        kb.clearEvents()

        win.flip()
      Each Frame:
        continuing = True
        while clock.getTime() <= fixationT:
            key = kb.getKeys(['space', 'escape'], waitRelease=False)
            if 'escape' in key:
                  core.quit()
    CodeComponent elRecord_fixation
      Code Type = Py
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      Begin Routine:
        this_epoch = 'fixation'
        aaa = core.monotonicClock.getTime
        thisExp.addData('fixationStart',str(aaa()))
        if eyetracking == 1:
            # get a reference to the currently active EyeLink connection
            el_tracker = pylink.getEYELINK()

            try:
                #start recording
                el_tracker.startRecording(1, 1, 1, 1)
                #send message to tracker to count trial number
                el_tracker.sendMessage('TRIALID %s' % str(trlId))
                el_tracker.sendMessage('fixationRest')
            except RuntimeError as error:
                print("ERROR:", error)
                abort_trial()
      End Routine:
        aaa = core.monotonicClock.getTime
        thisExp.addData('fixationEnd',str(aaa()))
  Routine stim
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    CodeComponent drawVisualStim
      Code Type = Py
      Begin Routine:
        imLeft.setImage(leftImagePath[trlCntTotal].replace(os.sep, "/"))
        imRight.setImage(rightImagePath[trlCntTotal].replace(os.sep, "/"),)

        clock.reset()
        kb.clock.reset()
        kb.clearEvents()

        imLeft.setAutoDraw(True)
        imRight.setAutoDraw(True)




        win.flip()
      Each Frame:
        continuing = True
        while clock.getTime() <= stimT:
            pass
      End Routine:
        imLeft.setAutoDraw(False)
        imRight.setAutoDraw(False)

        #add left image info
        thisExp.addData('imageLeft',imCat_left[trlCntTotal])
        thisExp.addData('imageSubCategoryLeft',imSubcat_left[trlCntTotal])
        thisExp.addData('imageNumLeft',imLabelNum_left[trlCntTotal])

        #add right image info
        thisExp.addData('imageRight',imCat_right[trlCntTotal])
        thisExp.addData('imageSubCategoryRight',imSubcat_right[trlCntTotal])
        thisExp.addData('imageNumRight',imLabelNum_right[trlCntTotal])

        #add other info
        thisExp.addData('stimT', stimT)
    CodeComponent elRecord_stim
      Code Type = Py
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      Begin Routine:
        this_epoch = 'stim'
        aaa = core.monotonicClock.getTime
        thisExp.addData(this_epoch+'Start',str(aaa()))

        if eyetracking == 1:
            el_tracker.sendMessage(this_epoch)
      End Routine:
        aaa = core.monotonicClock.getTime
        thisExp.addData(this_epoch+'End',str(aaa()))
  Routine loadExpVar
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    CodeComponent stimParams
      Code Type = Py
      Before Experiment:
        import numpy as np  # whole numpy lib is available, prepend 'np.'
        import pandas as pd
        import random
        import os  # handy system and path functions
        import sys  # to get file system encoding
        import glob
      Begin Experiment:
        eyetracking = 1

        blkTotal = 10
        trlEachBlk = 20

        #init counter
        trlCntTotal = 0

        #init position/size related params
        leftImPos = [-0.2,0]
        rightImPos = [0.2,0]
        fixSize = np.array([0.12,0.12])#np.array([0.16,0.16])

        probePosVarX = 0.25
        probePosVarY = 0.12

        #distractor trials perc
        distractorPerc = 0.3
        textSize = 0.03

        #probeParams
        correctProbeNum = 1
        relatedProbeNum = [1,1]
        unreledProbeNum = [1,1]
        unreledCatNum = [1,1]
        visualProbeSizeScalar = np.sqrt(2)

        #probe array label
        clickableLabel = np.array(['correct','distractor','correctSubCat_sameBri',
                          'correctSubCat_diffBri','distractorSubCat_sameBri',
                          'distractorSubCat_diffBri'])#

        # timing related params
        fixationT = 0.5
        stimT = 3
        retrocueT = 0.5
        noisePatchT = 0.25
        preCueRestT = 0.5
        delayT = 4
        noDistractorDelayT = 2
        distractorT = 0.5
        probeT = 20
        itiT = 0.5

        fixSize = np.array([0.12,0.12])#np.array([0.16,0.16])

        #Cue colors
        cueColArr = [[64,128,72],[128,64,128]]
        cueColDefault = [128,115,96]

        #other variables
        probePosArr = np.asarray([[-1*probePosVarX,probePosVarY],[0,probePosVarY],[probePosVarX,probePosVarY],
                                  [-1*probePosVarX,-1*probePosVarY],[0,-1*probePosVarY],[probePosVarX,-1*probePosVarY],])
        trlTotal = blkTotal*trlEachBlk
        repsEachCat = int(trlTotal/2)
        distractorArr = np.asarray([0]*trlTotal)

        #
        clock = core.Clock()
        kb = keyboard.Keyboard()
    CodeComponent loadImages
      Code Type = Py
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      Begin Experiment:
        #imageFilePath
        imageFilePath ="C:/Users/cocon/OneDrive/Documents/GitHub/psychedeLightsExpCode/"#'C:/Users/ipmmz/Desktop/psychedeLights_psychopy/'#

        """variables to create probe (sensory condition)"""
        strMapping = {'rn':'stimuliNight/rural/',
                      'un':'stimuliNight/urban/',
                      'rd':'stimuliDay/rural/',
                      'ud':'stimuliDay/urban/'}
        strMapping_inverseTime = {'rn':'stimuliDay/rural/',
                      'un':'stimuliDay/urban/',
                      'rd':'stimuliNight/rural/',
                      'ud':'stimuliNight/urban/'}

        clickableLabel = np.array(['correct','uncuedItem','relatedSubCat_sameBrightness',
                          'relatedSubCat_differentBrightness','unRelatedSubCat_sameBrightness',
                          'unRelatedSubCat_differentBrightness'])#

        ruralSimilars = pd.Series([
        ['house', 'costalVillage','hillsideHouse','barn'],
        ['roads','streets'],
        ['cove','beach','woods']
        ])

        urbanSimilars = pd.Series([
        ['streets', 'parking','bus','subway','building','skyscraper'],
        ])

        #load neutral images
        neutralGreyImages = glob.glob(imageFilePath + 'scene/categoryProbes/*/*.jpg')

        #load stims
        rd = glob.glob(imageFilePath+'scene/stimuliDay/rural' + '/*.jpg')
        rn = glob.glob(imageFilePath+'scene/stimuliNight/rural' + '/*.jpg')
        ud = glob.glob(imageFilePath+'scene/stimuliDay/urban' + '/*.jpg')
        un = glob.glob(imageFilePath+'scene/stimuliNight/urban' + '/*.jpg')

        #shuffle stimuli
        random.shuffle(rd)
        random.shuffle(rn)
        random.shuffle(ud)
        random.shuffle(un)
        leftImagePath = []
        rightImagePath = []


        def genImPath(condLabel):#condLabel e.g. ['rd', 'ud', 'ud', 'un',]
            values, counts = np.unique(condLabel, return_counts=True)
            out = pd.Series(condLabel)

            shuffledImArr = [np.random.choice(i,size = len(i)) for i in [rd,ud,rn,un]]
            allImages = dict(zip(['rd','ud','rn','un'],shuffledImArr))

            for label,count in zip(values, counts):
                try:
                    out[out == label] = allImages[label][:count]
                except:
                    print('there are more trials than available images,try reduce trial number')
            return out.values


        #determine the stimuli type (urban or rural) of the stims
        stimSceneArr_left = ['u','r']*repsEachCat
        random.shuffle(stimSceneArr_left)

        stimSceneArr_right= ['u','r']*repsEachCat
        random.shuffle(stimSceneArr_right)

        #determine the stim brightness (day/night); 0 = day, 1 = night;
        stimBriArr_left =  np.asarray([1,0]*repsEachCat)#np.random.randint(low = 0, high = 2, size = trlTotal)
        random.shuffle(stimBriArr_left)
        stimBriArr_right = 1 - stimBriArr_left

        leftCondLabel = [i+k for i,k in zip(np.array(stimSceneArr_left),np.where(stimBriArr_left == 0,'d','n'))]
        rightCondLabel = [i+k for i,k in zip(np.array(stimSceneArr_right),np.where(stimBriArr_right == 0,'d','n'))]


        rightImagePath = genImPath(leftCondLabel,)
        leftImagePath = genImPath(rightCondLabel,)



        #for creating probe
        ruralSubcat = list(set([i.split(os.sep)[1].split('_')[1] for i in rd]))
        urbanSubcat = list(set([i.split(os.sep)[1].split('_')[1] for i in ud]))


        strMapping = {'rn':'stimuliNight/rural/',
                      'un':'stimuliNight/urban/',
                      'rd':'stimuliDay/rural/',
                      'ud':'stimuliDay/urban/'}
        strMapping_inverseTime = {'rn':'stimuliDay/rural/',
                      'un':'stimuliDay/urban/',
                      'rd':'stimuliNight/rural/',
                      'ud':'stimuliNight/urban/'}
        """functions to create probe (sensory condition)"""



        def relProbeThisTrl_helper(imagePathArr, n = 1):
            # image Path arr is the image path array;
            imagePathFlatten = np.ravel(imagePathArr)
            temp = np.array([i.split(os.sep) for i in imagePathFlatten])

            pathRoots = temp[:,0].reshape(imagePathArr.shape)
            imIDs = temp[:,1].reshape(imagePathArr.shape)

            probeThisTrl = []
            for r,ids in zip(pathRoots,imIDs):
                thisPath = np.array([])
                for idThis in ids:
                    #print(idThis)
                    thisPath = np.append(thisPath,glob.glob( r[0] +'Probe/'+ idThis.split('.')[0] + '*.jpg'))

                probeThisTrl.append(np.random.choice(thisPath,n,replace = True))
            return np.ravel(probeThisTrl)



        def randNumGenExcept(start,stop,exceptNum,n = 1,withReplacement = False):#generate random number from start to stop (inclusive) except
            try:
                q = [i for i in range(start,stop+1) if i!= exceptNum]
                out = np.random.choice(np.asarray(q),size=n, replace=withReplacement)
            except ValueError:
                out = np.random.choice(range(start,stop+1),size=n, replace=withReplacement)
            return out

        def randLabelGenExcept(labels,exceptLabel,**kwargs):#generate random number from start to stop (inclusive) except
            return np.random.choice([i for i in labels if i!= exceptLabel],**kwargs)

        def randLabelGenExcept_multiple(labels,exceptLabel,**kwargs):#generate random number from start to stop (inclusive) except
            j = np.array([i for i in labels if not (i in exceptLabel)])
            return np.random.choice(j,replace=False,**kwargs,)

        def probeThisTrl(imagePathArr, n = 1):
            # image Path arr is the image path array;

            #create correct probe list
            temp = np.array([i.split(os.sep) for i in imagePathArr])
            corrProbe = [glob.glob(path[0] + 'Probe/' + path[1].split('.')[0] + '*.jpg') for path in temp]
            corrProbe = [random.sample(list(probeItems), len(probeItems)) for probeItems in corrProbe]

            if n!= None:
                corrProbe = [random.sample(list(probeItems), n) for probeItems in corrProbe]
            #create related probe list
            return np.asarray(corrProbe)

        def relatedProbeThisTrl(imCat,imSubcat,imLabelNum,strMapping,**kwargs):

            #counting the number of images in this subcategory
            subCatCnt = [len(glob.glob(imageFilePath+ 'scene/' + strMapping[cat] +'*' +'_'+ subcat + '*.jpg')) for cat,subcat in zip(imCat,imSubcat,)]

            #grab a image number from this sub category, except if it's the same number as the probed image
            relProbeNum = [randNumGenExcept(start = 1,stop = k,exceptNum = j,**kwargs) for k,j in zip(subCatCnt,[int(i) for i in imLabelNum])]#

            #get the file path using the image number, this is necessary for the next step
            relProbePath = [np.asarray(glob.glob(imageFilePath+ 'scene/' + strMapping[cat]+ '*'+'_'+ subcat +'*.jpg'))[num-1] for cat,subcat,num in zip(imCat,imSubcat,relProbeNum)]
            #get the probe file path
            return relProbeThisTrl_helper(np.asarray(relProbePath),**kwargs)


        def unrelatedProbe(imCat,imSubcat,strMapping,num,catNum): #i wrote this differently bc psychopy keeps giving me weird bug. Psychpy go die.
            unrelatedProbePath = []
            unrelatedProbeSubcat = []
            for i,k in zip(imSubcat,imCat):
                if k[0] =='r':
                    unrelatedProbeSubcat.append(randLabelGenExcept(ruralSubcat,i,size = catNum))
                else:
                    unrelatedProbeSubcat.append(randLabelGenExcept(urbanSubcat,i,size = catNum))
            for cat,subcat in zip(np.repeat(imCat,catNum),np.ravel(unrelatedProbeSubcat),):
                q = glob.glob(imageFilePath+ 'scene/' + strMapping[cat]+ '*'+'_'+ subcat +'*.jpg')
                k = np.random.choice(q,replace=False,)
                unrelatedProbePath.append(k)
            return np.asarray(probeThisTrl(unrelatedProbePath,num)) #probeThisTrl(),num)

        def genProbe(numCorr,numRel,numUnrel,
                     imPath,unRelCatNum = [2,1],**kwargs):
            # numCorr is the number of correct probes
            # numRel is a 2 item array, the first int is the number of related probe that has the same brightness, the second different brightness
            # numUnrel related is the number of probe images that isn't in the same category, the first int is the number of related probe that has the same brightness, the second different brightness
            # unRelCatNum is a 2 item array, specifies the number of categories for same and different brightness

            #create the correct probe

            corrProbeArr = probeThisTrl(imPath,n = numCorr)
            imCat,imSubcat,temp,imLabelNum = np.array([i.split(os.sep)[1].split('_')[:-1] for i in imPath]).T

            #create the related probe
            relProbe_sameBri = relatedProbeThisTrl(imCat,imSubcat,imLabelNum,strMapping,n = numRel[0],)
            relProbe_diffBri = relatedProbeThisTrl(imCat,imSubcat,imLabelNum,strMapping_inverseTime,n = numRel[1],)

            relProbe = np.vstack((np.array(relProbe_sameBri),np.array(relProbe_diffBri)))
            relProbe = np.ravel(relProbe.T)

            return corrProbeArr,relProbe
        """determine trial type visual or categorical"""
        # create trial condtion (0 = visual; 1 = abstract)
        trlType = [0,1] * repsEachCat
        random.shuffle(trlType)

        """create visual stim condition"""
        #nreps * 4 columns. e.g. 'rn', 'camp','street','04'
        imCat_left,imSubcat_left,temp_left,imLabelNum_left = np.array([i.split(os.sep)[1].split('_')[:-1] for i in leftImagePath]).T
        imCat_right,imSubcat_right,temp_right,imLabelNum_right = np.array([i.split(os.sep)[1].split('_')[:-1] for i in rightImagePath]).T

        """create retrocue condition"""
        #determine direction
        #cue point to right by default *i.e. if 0, then cue point to right, if 180, left
        cueArr = np.random.choice([0, 180],size = trlTotal)
        cueArrLabel = ['left' if x == 180 else 'right' for x in cueArr] #this will be used for outputting

        """create probe, visual"""
        #create probe
        maskRight = np.where(cueArr == 180,True,False)#left cue = true
        cuedImagePath = np.where(maskRight,leftImagePath,rightImagePath)
        unCuedImagePath = np.where(maskRight,rightImagePath,leftImagePath)
        cuedImageBri = ['bri' if i.split(os.sep)[-1][1] == 'd' else 'dar' for i in cuedImagePath]

        #create paths for the probe images
        corrProbePath, relProbePath,  = genProbe(numCorr = correctProbeNum,numRel = relatedProbeNum,
                 numUnrel = unreledProbeNum,imPath = cuedImagePath,
                 unRelCatNum = unreledCatNum,)
        #also create a path for the uncued item probe (distractor)
        distractorProbePath, distractorRelProbePath,  = genProbe(numCorr = 1,numRel = [1,1],
                 numUnrel = [1,1],imPath = unCuedImagePath,
                 unRelCatNum = unreledCatNum,)

        #make item creation easier
        corrProbePath = np.ravel(corrProbePath)
        distractorProbePath = np.ravel(distractorProbePath)
        relProbePath = np.ravel(relProbePath)
        distractorRelProbePath =  np.ravel(distractorRelProbePath)

        """create probe, categorical"""
        #create the abstract condition probe paths
        incorrCatProbePath = []
        corrCatProbePath = []
        cuedImageSubCat = [i.split(os.sep)[-1].split('_')[:2] for i in cuedImagePath]



        for n,i in enumerate(cuedImageSubCat):
            thisImCat = i[0]
            thisImSubCat = i[1]

            if thisImCat[0] == 'r':
                temp = [thisImSubCat in cat for cat in ruralSimilars]
                if sum(temp) == 0: #i.e. if the subcategory doesn't have similar subcategories
                    exceptLabels = [thisImSubCat]
                else:
                    exceptLabels = ruralSimilars[temp].values[0]
                probeSubcat = randLabelGenExcept_multiple(ruralSubcat,exceptLabels,size = 5)
                incorrCatProbePath.append([np.random.choice(glob.glob(imageFilePath + 'scene/categoryProbes/rural*/*'+i+'*.jpg')) for i in probeSubcat])
                #get the correct subcategory, and make sure it's not the same as the cued image
                allPathThisSubcat = glob.glob(imageFilePath + 'scene/categoryProbes/rural*/*'+thisImSubCat+'*.jpg')
                allPathThisSubcat_imName = [i.split(os.sep)[-1] for i in allPathThisSubcat]
                thisPath = "/".join(allPathThisSubcat[0].split(os.sep)[:-1]) +'/' + randLabelGenExcept(allPathThisSubcat_imName,cuedImagePath[n].split(os.sep)[-1])
                corrCatProbePath.append(thisPath)

            else:
                temp = [thisImSubCat in cat for cat in urbanSimilars]
                if sum(temp) == 0: #i.e. if the subcategory doesn't have similar subcategories
                    exceptLabels = [thisImSubCat]
                else:
                    exceptLabels = urbanSimilars[temp].values[0]
                probeSubcat = randLabelGenExcept_multiple(urbanSubcat,exceptLabels,size = 5)
                incorrCatProbePath.append([np.random.choice(glob.glob(imageFilePath + 'scene/categoryProbes/urban*/*'+i+'*.jpg')) for i in probeSubcat])
                #get the correct subcategory, and make sure it's not the same as the cued image
                allPathThisSubcat = glob.glob(imageFilePath + 'scene/categoryProbes/urban*/*'+thisImSubCat+'*.jpg')
                allPathThisSubcat_imName = [i.split(os.sep)[-1] for i in allPathThisSubcat]
                thisPath = "/".join(allPathThisSubcat[0].split(os.sep)[:-1]) +'/' +randLabelGenExcept(allPathThisSubcat_imName,cuedImagePath[n].split(os.sep)[-1])
                corrCatProbePath.append(thisPath)

        corrCatProbePath = np.ravel(corrCatProbePath)
        incorrCatProbePath = np.ravel(incorrCatProbePath)

        """create distractor paths"""

        #for each trial type, select some trials to be distractor trials
        visualTrlIndex = np.where(np.array(trlType) == 0)[0]
        visualDistractorIndex = np.random.choice(visualTrlIndex,replace = False,
                                                 size = int(repsEachCat*distractorPerc))

        categoricalTrlIndex = np.where(np.array(trlType) == 1)[0]
        categoricalDistractorIndex = np.random.choice(categoricalTrlIndex,replace = False,
                                                      size = int(repsEachCat*distractorPerc))
        distractorArr[visualDistractorIndex] = 1
        distractorArr[categoricalDistractorIndex] = 2

        #for distractorArr,if 1 = visual distractor, generate a random image that's not the same as the cued/uncued images
        # if 2 = categorical, generate the uncued item sub category
        # if 0, nothing
        distractorPath = pd.Series(distractorArr.copy())

        visualTrlStimPath = zip(cuedImagePath[distractorPath[distractorPath == 1].index],unCuedImagePath[distractorPath[distractorPath == 1].index])
        visualTrlStimPath = [randLabelGenExcept_multiple(neutralGreyImages,[i,k]) for i,k in visualTrlStimPath]
        distractorPath[distractorPath == 1] = visualTrlStimPath

        categoricalTrlStimPath = unCuedImagePath[distractorPath[distractorPath == 2].index]
        categoricalTrlStimPath = [i.split(os.sep)[-1].split("_")[1] for i in categoricalTrlStimPath]
        distractorPath[distractorPath == 2] = categoricalTrlStimPath

        """Create visual objects"""
        #create fixation circle and retrocue
        #fixation cross
        fixCircMask = visual.ImageStim(win,image = imageFilePath + 'visualObj/fixCirc.png',size= fixSize)
        retrocueMask = visual.ImageStim(win,image = imageFilePath + 'visualObj/retrocue.png',size= fixSize)
        #color
        cueCircColor = visual.Polygon(win,edges = 4,radius=1,ori = 45,colorSpace = 'rgb255',fillColor=cueColDefault,size= fixSize/2)
        #create memory items
        imLeft = visual.ImageStim(win, )
        imRight = visual.ImageStim(win, )
        imRight.setPos(rightImPos)
        imLeft.setPos(leftImPos)
        #create noise patch
        noisePatchLeft = visual.ImageStim(win,image = imageFilePath + 'visualObj/noiseGauss50.png')
        noisePatchRight = visual.ImageStim(win,image = imageFilePath + 'visualObj/noiseGauss50.png')
        noisePatchLeft.setPos(leftImPos)
        noisePatchRight.setPos(rightImPos)

        #create the probestims
        #visual condition
        corrProbeArr = visual.ImageStim(win,image = None)
        distractorProbeArr = visual.ImageStim(win,image = None)
        relProbeArr = np.asarray([visual.ImageStim(win,image = None) for i in range(2)])
        distractorRelProbeArr = np.asarray([visual.ImageStim(win,image = None) for i in range(2)])

        #abstract condition
        corrCatProbeArr = visual.ImageStim(win,image = None)
        incorrCatProbeArr = np.asarray([visual.ImageStim(win,image = None) for i in range(5)])

        #create distractor
        visualDistractor = visual.ImageStim(win,image = None)
        categoricalDistractor = visual.TextStim(win,text = '',height = textSize)
  Routine ITI
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    CodeComponent elRecord_iti
      Code Type = Auto->JS
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      Begin Routine:
        aaa = core.monotonicClock.getTime
        thisExp.addData('itiStart',str(aaa()))
        this_epoch = 'ITI'

        if eyetracking == 1:
            el_tracker.sendMessage('ITI')
      End Routine:
        aaa = core.monotonicClock.getTime
        thisExp.addData('itiEnd',str(aaa()))
        if eyetracking == 1:

            el_tracker.sendMessage('trialEnd')
            el_tracker.sendMessage('!V TRIAL_VAR TRIALID %s'% str(trlId))
            el_tracker.stopRecording()
    CodeComponent resets
      Code Type = Py
      Begin Routine:
        #add 1 to total trl count
        trlCntTotal +=1
        trlCntThisBlk +=1

        clock.reset()
        kb.clock.reset()
        kb.clearEvents()
      Each Frame:
        continuing = True
        while clock.getTime() <= itiT:
            key = kb.getKeys([ 'escape'], waitRelease=False)
            if 'escape' in key:
                  core.quit()
      End Routine:
        clock.reset()
        kb.clock.reset()
        kb.clearEvents()
  Routine trlInit
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    CodeComponent initTrlParams
      Code Type = Py
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      Begin Routine:
        """create trial id"""
        trlId = (expInfo['participant'],trlCntThisBlk,expBlk.thisN)

        """cue related params"""
        cueCircColor.fillColor = cueColDefault

        """distractor related params"""
        distractorType = None
        distractorCtrl = 1 #default add distractor
        visualDistractor.opacity = 0
        categoricalDistractor.setOpacity(0)
        if distractorArr[trlCntTotal] == 0: #no distactor
            distractorCtrl = 0
            distractorType = (False,'noDistractor',None)
        elif distractorArr[trlCntTotal] == 1: #visual
            visualDistractor.setImage(distractorPath[trlCntTotal])
            visualDistractor.opacity = 1
            distractorType = (True,'visual',distractorPath[trlCntTotal].split(os.sep)[-1])
        else: #categorical
            categoricalDistractor.text = distractorPath[trlCntTotal]
            categoricalDistractor.setOpacity(1)
            distractorType = (True,'categorical',distractorPath[trlCntTotal])

        """probe related params"""
        np.random.shuffle(probePosArr)
        #set the probe images this trial
        if trlType[trlCntTotal] == 0: #if visual trial, set visual probe
            trlTypeThis = 'visual'
            cueCorThis = cueColArr[0]

            #the following params are used for indexing
            a = trlCntTotal*sum(relatedProbeNum)
            b = trlCntTotal*sum(relatedProbeNum)+sum(relatedProbeNum)

            #grab the position params for different probes.
            corrPos = probePosArr[0]
            distractorPos = probePosArr[1]
            relPos = probePosArr[2:2+sum(relatedProbeNum)]
            distractorRelPos = probePosArr[2+sum(relatedProbeNum):2+sum(relatedProbeNum)+sum(relatedProbeNum)]

            #get all probe items
            corrProbeArr.setImage(corrProbePath[trlCntTotal])
            distractorProbeArr.setImage(distractorProbePath[trlCntTotal])
            clickables = [corrProbeArr,distractorProbeArr]

            #set position
            corrProbeArr.setPos(corrPos)
            distractorProbeArr.setPos(distractorPos)

            for n,(i,p) in enumerate(zip(relProbePath[a:b],relPos)):
                relProbeArr[n].setImage(i)
                clickables.append(relProbeArr[n])
                relProbeArr[n].setPos(p)
            for n,(i,p) in enumerate(zip(distractorRelProbePath[a:b],distractorRelPos)):
                distractorRelProbeArr[n].setImage(i)
                clickables.append(distractorRelProbeArr[n])
                distractorRelProbeArr[n].setPos(p)
            for i in clickables:
                i.size = i.size*visualProbeSizeScalar
        else: #if categorical trial, set categorical probe
            trlTypeThis = 'categorical'
            cueCorThis = cueColArr[1]

            #the following params are used for indexing
            a = trlCntTotal*5
            b = trlCntTotal*5+5

            corrPos = probePosArr[0]
            incorrPos = probePosArr[1:]

            #get all probe items
            corrCatProbeArr.setImage(corrCatProbePath[trlCntTotal])
            corrCatProbeArr.setPos(corrPos)
            clickables = [corrCatProbeArr]

            for n,(i,p) in enumerate(zip(incorrCatProbePath[a:b],incorrPos)):
                incorrCatProbeArr[n].setImage(i)
                clickables.append(incorrCatProbeArr[n])
                incorrCatProbeArr[n].setPos(p)
            for i in clickables:
                i.size = i.size/visualProbeSizeScalar
        clickables = np.asarray(clickables)
      End Routine:
        thisExp.addData('TRIALID',trlId)
        thisExp.addData('trlType',trlTypeThis)
        thisExp.addData('distractor',distractorType)
  Routine retrocue
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    CodeComponent drawRetrocue
      Code Type = Py
      Begin Routine:
        retrocueMask.ori = cueArr[trlCntTotal]

        cueCircColor.colorSpace='rgb255'
        cueCircColor.color = cueCorThis
        cueCircColor.setAutoDraw(True)
        retrocueMask.setAutoDraw(True) #draw retrocue


        clock.reset()
        kb.clock.reset()
        kb.clearEvents()

        win.flip()
      Each Frame:
        continuing = True
        while clock.getTime() <= retrocueT:
            key = kb.getKeys(['space', 'escape'], waitRelease=False)
            if 'escape' in key:
                  core.quit()
      End Routine:
        cueCircColor.setAutoDraw(False)
        retrocueMask.setAutoDraw(False)

        thisExp.addData('cueDirection',cueArrLabel[trlCntTotal])
        thisExp.addData('cuedItem',cuedImageBri[trlCntTotal])
    CodeComponent elRecord_retrocue
      Code Type = Py
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      Begin Routine:
        this_epoch = 'retrocue'
        aaa = core.monotonicClock.getTime
        thisExp.addData(this_epoch+'Start',str(aaa()))

        if eyetracking == 1:
            #el_tracker.startRecording(1, 1, 1, 1)
            el_tracker.sendMessage(this_epoch)
      End Routine:
        aaa = core.monotonicClock.getTime
        thisExp.addData(this_epoch+'End',str(aaa()))
  Routine blkInit
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    CodeComponent initBlkParams
      Code Type = Py
      Begin Routine:
        trlCntThisBlk = 0
  Routine IBI
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = you've reached the end of this block, press space when you're ready to continue
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    KeyboardComponent ibiSpace
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine delay
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    CodeComponent delayCode
      Code Type = Py
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      Begin Routine:
        cueCircColor.setAutoDraw(True)
        fixCircMask.setAutoDraw(True)
        noisePatchRight.setAutoDraw(False)
        noisePatchLeft.setAutoDraw(False)

        clock.reset()
        kb.clearEvents()

        win.flip()
      Each Frame:
        continuing = True
        while clock.getTime() <= noDistractorDelayT:

            key = kb.getKeys(['escape'], waitRelease=False)
            if 'escape' in key:
                core.quit()

        cueCircColor.setAutoDraw(False)
        fixCircMask.setAutoDraw(False)


        while (clock.getTime() >= noDistractorDelayT) & (distractorCtrl == 1) & (clock.getTime() < noDistractorDelayT + distractorT):
            visualDistractor.setAutoDraw(True)
            categoricalDistractor.setAutoDraw(True)
            win.flip()

        cueCircColor.setAutoDraw(True)
        fixCircMask.setAutoDraw(True)
        visualDistractor.setAutoDraw(False)
        categoricalDistractor.setAutoDraw(False)
        win.flip()

        while (clock.getTime() < delayT):
            pass
      End Routine:
        noisePatchRight.setAutoDraw(False)
        noisePatchLeft.setAutoDraw(False)

        fixCircMask.setAutoDraw(False)
        cueCircColor.setAutoDraw(False)

        win.flip()
    CodeComponent elRecord_delay
      Code Type = Py
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      Begin Routine:
        this_epoch = 'delay'
        aaa = core.monotonicClock.getTime
        thisExp.addData(this_epoch+'Start',str(aaa()))

        if eyetracking == 1:
            #el_tracker.startRecording(1, 1, 1, 1)
            el_tracker.sendMessage(this_epoch)
      End Routine:
        aaa = core.monotonicClock.getTime
        thisExp.addData(this_epoch+'End',str(aaa()))
  Routine preCueRest
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    CodeComponent drawNoise
      Code Type = Py
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      Begin Routine:
        noisePatchRight.setAutoDraw(True)
        noisePatchLeft.setAutoDraw(True)

        clock.reset()
        kb.clearEvents()

        win.flip()
      Each Frame:
        continuing = True
        while clock.getTime() <= noisePatchT:
            key = kb.getKeys(['escape'], waitRelease=False)
            if 'escape' in key:
                  core.quit()
        noisePatchRight.setAutoDraw(False)
        noisePatchLeft.setAutoDraw(False)
        win.flip()

        while clock.getTime() <= preCueRestT:
            pass
      End Routine:
        cueCircColor.setAutoDraw(False)
        fixCircMask.setAutoDraw(False)
    CodeComponent elRecord_preCue
      Code Type = Py
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      Begin Routine:
        this_epoch = 'preCueRest'
        aaa = core.monotonicClock.getTime
        thisExp.addData(this_epoch+'Start',str(aaa()))

        if eyetracking == 1:
            #el_tracker.startRecording(1, 1, 1, 1)
            el_tracker.sendMessage(this_epoch)
      End Routine:
        aaa = core.monotonicClock.getTime
        thisExp.addData(this_epoch+'End',str(aaa()))
  Routine connectEL
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    CodeComponent connectTracker
      Code Type = Py
      Before Experiment:
        import platform
        from PIL import Image  # for preparing the Host backdrop image
        from string import ascii_letters
        import time

        # import eyelink libs
        import pylink
        from EyeLinkCoreGraphicsPsychoPy import EyeLinkCoreGraphicsPsychoPy
      Begin Experiment:
        # this is adapted from the SR research's eyelink tutorial code
        #parameters to change
        calib_style = 13 #9 for head fixed, 13 for remote
        samprate = 1000 #250, 500, 1000, or 2000
        calib_tar_size = 24 #size for the calibration target

        """change this"""
        width_param = 53.0
        distance_param =70.0


        #create a folder to store all edf files, call this folder 'results'
        edf_folder = 'C:/Users/yud070/Documents/elRaw'
        if not os.path.exists(edf_folder):
            os.makedirs(edf_folder)

        # We download EDF data file from the EyeLink Host PC to the local hard
        # drive at the end of each testing session, here we rename the EDF to
        # include session start date/time
        time_str = time.strftime("_%Y_%m_%d_%H_%M", time.localtime())
        session_identifier = str(expInfo['participant']) + time_str

        # create a folder for the current testing session in the "results" folder
        session_folder = os.path.join(edf_folder, session_identifier)
        if not os.path.exists(session_folder):
            os.makedirs(session_folder)


        #helper function for displaying text
        def clear_screen(win):
            """ clear up the PsychoPy window"""

            win.fillColor = genv.getBackgroundColor()
            win.flip()
        def show_msg(win, text, wait_for_keypress=True):
            """ Show task instructions on screen"""

            msg = visual.TextStim(win, text,
                                  color=genv.getForegroundColor(),
                                  wrapWidth=scn_width/2)
            clear_screen(win)
            msg.draw()
            win.flip()

            # wait indefinitely, terminates upon any key press
            if wait_for_keypress:
                event.waitKeys(keyList = ['space','escape'],maxWait = 60)
                clear_screen(win)

        #function to terminate task and retrieve the EDF data file from the host PC and
        #download to the display pc
        def terminate_task():
            el_tracker = pylink.getEYELINK()

            if el_tracker.isConnected():

                # Put tracker in Offline mode
                el_tracker.setOfflineMode()

                # Clear the Host PC screen and wait for 500 ms
                el_tracker.sendCommand('clear_screen 0')
                pylink.msecDelay(500)

                # Close the edf data file on the Host
                el_tracker.closeDataFile()

                # Show a file transfer message on the screen
                msg = 'EDF data is transferring from EyeLink Host PC...'
                show_msg(win, msg, wait_for_keypress=False)

                # Download the EDF data file from the Host PC to a local data folder
                # parameters: source_file_on_the_host, destination_file_on_local_drive
                local_edf = os.path.join(session_folder, session_identifier + '.EDF')
                try:
                    el_tracker.receiveDataFile(edf_file, local_edf)
                except RuntimeError as error:
                    print('ERROR:', error)

                # Close the link to the tracker.
                el_tracker.close()

            # close the PsychoPy window
            win.close()

            # quit PsychoPy
            core.quit()
            sys.exit()

        def abort_trial():
            """Ends recording """

            el_tracker = pylink.getEYELINK()

            # Stop recording
            if el_tracker.isRecording():
                # add 100 ms to catch final trial events
                pylink.pumpDelay(100)
                el_tracker.stopRecording()

            # clear the screen
            clear_screen(win)
            # Send a message to clear the Data Viewer screen
            bgcolor_RGB = (116, 116, 116)
            el_tracker.sendMessage('!V CLEAR %d %d %d' % bgcolor_RGB)

            # send a message to mark trial end
            el_tracker.sendMessage('TRIAL_RESULT %d' % pylink.TRIAL_ERROR)
      Begin Routine:
        # Step 1: Connect to the EyeLink Host PC
        host_ip = "100.1.1.1"
        if eyetracking == 1:
            try:
                el_tracker = pylink.EyeLink(host_ip)
            except RuntimeError as error:
                print('ERROR:', error)
                core.quit()
                sys.exit()

            # Step 2: Open an EDF data file on the Host PC
            edf_file = str(expInfo['participant']) + ".EDF"
            try:
                el_tracker.openDataFile(edf_file)
            except RuntimeError as err:
                print('ERROR:', err)
                # close the link if we have one open
                if el_tracker.isConnected():
                    el_tracker.close()
                core.quit()
                sys.exit()

            # Step 3: Configure the tracker
            # Put the tracker in offline mode before we change tracking parameters
            el_tracker.setOfflineMode()
            # File and Link data control
            # what eye events to save in the EDF file, include everything by default
            file_event_flags = 'LEFT,RIGHT,FIXATION,SACCADE,BLINK,MESSAGE,BUTTON,INPUT'
            file_sample_flags = 'LEFT,RIGHT,GAZE,GAZERES,HREF,RAW,PUPIL,AREA,HTARGET,STATUS,INPUT'
            # what eye events to make available over the link, include everything by default
            link_event_flags = 'LEFT,RIGHT,FIXATION,SACCADE,BLINK,BUTTON,FIXUPDATE,INPUT'
            link_sample_flags = 'LEFT,RIGHT,GAZE,GAZERES,AREA,HTARGET,STATUS,INPUT'
            el_tracker.sendCommand("file_event_filter = %s" % file_event_flags)
            el_tracker.sendCommand("file_sample_data = %s" % file_sample_flags)
            el_tracker.sendCommand("link_event_filter = %s" % link_event_flags)
            el_tracker.sendCommand("link_sample_data = %s" % link_sample_flags)
            #set calibration style
            el_tracker.sendCommand("calibration_type = HV%s" % str(calib_style))
            #set sampling rate
            el_tracker.sendCommand("sample_rate %s" % str(samprate))

            # Step 4: set up a graphics environment for calibration
            # get the native screen resolution used by PsychoPy
            scn_width, scn_height = win.size
            # resolution fix for Mac retina displays
            if 'Darwin' in platform.system():
                if use_retina:
                    scn_width = int(scn_width/2.0)
                    scn_height = int(scn_height/2.0)
            # Pass the display pixel coordinates (left, top, right, bottom) to the tracker
            el_coords = "screen_pixel_coords = 0 0 %d %d" % (scn_width - 1, scn_height - 1)
            el_tracker.sendCommand(el_coords)
            # Write a DISPLAY_COORDS message to the EDF file
            # Data Viewer needs this piece of info for proper visualization
            dv_coords = "DISPLAY_COORDS  0 0 %d %d" % (scn_width - 1, scn_height - 1)
            el_tracker.sendMessage(dv_coords)
            # Configure a graphics environment (genv) for tracker calibration
            genv = EyeLinkCoreGraphicsPsychoPy(el_tracker, win)
            # Set background and foreground colors for the calibration target
            # in PsychoPy, (-1, -1, -1)=black, (1, 1, 1)=white, (0, 0, 0)=mid-gray
            foreground_color = (-1, -1, -1)
            background_color = win.color
            genv.setCalibrationColors(foreground_color, background_color)
            genv.setTargetSize(calib_tar_size)
            # Request Pylink to use the PsychoPy window we opened above for calibration
            pylink.openGraphicsEx(genv)
            task_msg = 'Press <space>, then <enter> to start calibration'
            show_msg(win, task_msg)
            print('line69')

            try:
                el_tracker.doTrackerSetup()
            except RuntimeError as err:
                print('ERROR:', err)
                el_tracker.exitCalibration()
        else:
            continueRoutine = False
      End Routine:
        #dont record yet
        if eyetracking == 1:
            el_tracker.setOfflineMode()
        win.mouseVisible = True
  Routine terminateExp
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    CodeComponent closeEl
      Code Type = Auto->JS
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      Begin Routine:
        if eyetracking == 1:

            # Step 7: disconnect, download the EDF file, then terminate the task
            terminate_task()
  Routine categoryProbe
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    CodeComponent elRecord_probe_cat
      Code Type = Py
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      Begin Routine:
        this_epoch = 'probe'
        aaa = core.monotonicClock.getTime
        thisExp.addData(this_epoch+'Start',str(aaa()))

        if eyetracking == 1:
            el_tracker.sendMessage(this_epoch)
      End Routine:
        aaa = core.monotonicClock.getTime
        thisExp.addData(this_epoch+'End',str(aaa()))
    PolygonComponent transparentPlaceHolder_cat
      fillColor = 0.0000, 0.0000, 0.0000
      opacity = 0
      saveStartStop = False
      shape = triangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $probeT
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    CodeComponent drawProbe_cat
      Code Type = Py
      Begin Experiment:
        probeMouse = event.Mouse(newPos = (0,0))
      Begin Routine:
        mouseIsDown = False

        #record continuous mouse activity
        probeMouse.x = []
        probeMouse.y = []
        probeMouse.leftButton = []
        probeMouse.midButton = []
        probeMouse.rightButton = []
        probeMouse.time = []
        probeMouse.clickOn = []

        #other mouse related variables
        eachClickTime = []
        eachClickItem = []

        #the following params are used for indexing
        a = trlCntTotal*sum(relatedProbeNum)
        b = trlCntTotal*sum(relatedProbeNum)+sum(relatedProbeNum)
        #c = trlCntTotal*sum(unreledProbeNum)
        #d = trlCntTotal*sum(unreledProbeNum)+2

        #grab the position params for different probes.
        corrPos = probePosArr[0]
        distractorPos = probePosArr[1]
        relPos = probePosArr[2:2+sum(relatedProbeNum)]
        distractorRelPos = probePosArr[2+sum(relatedProbeNum):2+sum(relatedProbeNum)+sum(relatedProbeNum)]
        #unrelPos = probePosArr[2+sum(relatedProbeNum):2+sum(relatedProbeNum)+sum(unreledProbeNum)]

        #get all probe items
        clickables = [corrProbeArr[trlCntTotal],distractorProbeArr[trlCntTotal]]

        #set position
        corrProbeArr[trlCntTotal].setPos(corrPos)
        distractorProbeArr[trlCntTotal].setPos(distractorPos)
        for i,p in zip(relProbeArr[a:b],relPos):
            clickables.append(i)
            i.setPos(p)
            i.setAutoDraw(True)
        for i,p in zip(distractorRelProbeArr[a:b],distractorRelPos):
            clickables.append(i)
            i.setPos(p)
            i.setAutoDraw(True)

        """
        for i,p in zip(unrelProbeArr[c:d],unrelPos):
            clickables.append(i)
            i.setPos(p)
            i.setAutoDraw(True)
        """
        clickables = np.asarray(clickables)
        clicksTotal = np.zeros(len(clickables))
        clickOnClickable = np.zeros(len(clickables))

        #prepare to draw
        corrProbeArr[trlCntTotal].setAutoDraw(True)
        distractorProbeArr[trlCntTotal].setAutoDraw(True)

        #resets
        clock.reset()
        kb.clearEvents()
        probeMouse.clickReset(buttons=(0, 1, 2))
        event.clearEvents('mouse')
        probeMouse.mouseClock.reset()

        #set mouse starting position
        probeMouse.setPos((0,0))
        probeMouse.setVisible(1)

        win.flip()
      Each Frame:
        x, y = probeMouse.getPos()
        probeMouse.x.append(x)
        probeMouse.y.append(y)
        buttons = probeMouse.getPressed()

        probeMouse.leftButton.append(buttons[0])
        probeMouse.midButton.append(buttons[1])
        probeMouse.rightButton.append(buttons[2])
        probeMouse.time.append(probeMouse.mouseClock.getTime())

        hoverOnClickable = np.asarray([i.contains(probeMouse) for i in clickables])
        probeMouse.clickOn.append(hoverOnClickable)


        key = kb.getKeys(['space', 'escape'], waitRelease=False)
        if 'space' in key:
            continueRoutine  = False
        if 'escape' in key:
            core.quit()
        #check for mouse press
        if sum(buttons) and mouseIsDown == False and sum(hoverOnClickable):
            clickOnClickable = np.where(hoverOnClickable,1,0)

            eachClickTime.append(probeMouse.mouseClock.getTime())
            eachClickItem.append(clickableLabel[np.where(clickOnClickable == 1)[0]][0])
            #mouse is pressing right now
            mouseIsDown = True
        #check for mouse release
        if sum(buttons) == 0 and mouseIsDown:
            #mouse released
            clicksTotal += clickOnClickable

            #change opacity
            clicking = clickables[clickOnClickable ==1][0]

            #set opacity
            for n,i in enumerate(clickables):
                i.opacity = 1
            clicking.opacity = 0.25

            mouseIsDown = False
      End Routine:
        corrProbeArr[trlCntTotal].setAutoDraw(False)
        distractorProbeArr[trlCntTotal].setAutoDraw(False)

        for i,p in zip(relProbeArr[a:b],relPos):
            i.setAutoDraw(False)

        for i,p in zip(distractorRelProbeArr[a:b],distractorRelPos):
            i.setAutoDraw(False)
        """
        for i,p in zip(unrelProbeArr[a:b],unrelPos):
            i.setAutoDraw(False)
        """
        win.flip()
        kb.clearEvents()

        probeMouse.setVisible(0)

        #

        #add mouse activity
        trials.addData('probeMouse.x', probeMouse.x)
        trials.addData('probeMouse.y', probeMouse.y)
        trials.addData('probeMouse.leftButton', probeMouse.leftButton)
        trials.addData('probeMouse.midButton', probeMouse.midButton)
        trials.addData('probeMouse.rightButton', probeMouse.rightButton)
        trials.addData('probeMouse.time', probeMouse.time)
        trials.addData('probeMouse.mouseOnProbes', probeMouse.clickOn)

        #add data about probe information
        for label,path in zip(clickableLabel,clickables):
            thisExp.addData(label,path._imName)

        #record position for each probe item
        thisExp.addData('probeLocationArr',probePosArr)
        #record the final response
        thisExp.addData('rspIndex',clickOnClickable)
        thisExp.addData('rsp',clickableLabel[np.where(clickOnClickable == 1)[0]][0])
        thisExp.addData('rspPath',clickables[np.where(clickOnClickable == 1)[0]][0]._imName)

        #record RT
        thisExp.addData('rt',eachClickTime[0])
        thisExp.addData('timeEachClick', eachClickTime)
        thisExp.addData('itemEachClick', eachClickItem)
  Routine probe
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    CodeComponent elRecord_probe
      Code Type = Py
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      Begin Routine:
        this_epoch = 'probe'
        aaa = core.monotonicClock.getTime
        thisExp.addData(this_epoch+'Start',str(aaa()))

        if eyetracking == 1:
            el_tracker.sendMessage(this_epoch)
      End Routine:
        aaa = core.monotonicClock.getTime
        thisExp.addData(this_epoch+'End',str(aaa()))
    PolygonComponent transparentPlaceHolder
      fillColor = 0.0000, 0.0000, 0.0000
      opacity = 0
      saveStartStop = False
      shape = triangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $probeT
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    CodeComponent drawProbe
      Code Type = Py
      Begin Experiment:
        probeMouse = event.Mouse(newPos = (0,0))
      Begin Routine:
        mouseIsDown = False

        #record continuous mouse activity
        probeMouse.x = []
        probeMouse.y = []
        probeMouse.leftButton = []
        probeMouse.midButton = []
        probeMouse.rightButton = []
        probeMouse.time = []
        probeMouse.clickOn = []

        #other mouse related variables
        eachClickTime = []
        eachClickItem = []

        clicksTotal = np.zeros(len(clickables))
        clickOnClickable = np.zeros(len(clickables))

        #prepare to draw
        for i in clickables:
            i.setAutoDraw(True)

        #resets
        clock.reset()
        kb.clearEvents()
        probeMouse.clickReset(buttons=(0, 1, 2))
        event.clearEvents('mouse')
        probeMouse.mouseClock.reset()

        #set mouse starting position
        probeMouse.setPos((0,0))
        probeMouse.setVisible(1)

        win.flip()
      Each Frame:
        x, y = probeMouse.getPos()
        probeMouse.x.append(x)
        probeMouse.y.append(y)
        buttons = probeMouse.getPressed()

        probeMouse.leftButton.append(buttons[0])
        probeMouse.midButton.append(buttons[1])
        probeMouse.rightButton.append(buttons[2])
        probeMouse.time.append(probeMouse.mouseClock.getTime())

        hoverOnClickable = np.asarray([i.contains(probeMouse) for i in clickables])
        probeMouse.clickOn.append(hoverOnClickable)


        key = kb.getKeys(['space', 'escape'], waitRelease=False)
        if 'space' in key:
            continueRoutine  = False
        if 'escape' in key:
            core.quit()
        #check for mouse press
        if sum(buttons) and mouseIsDown == False and sum(hoverOnClickable):
            clickOnClickable = np.where(hoverOnClickable,1,0)

            eachClickTime.append(probeMouse.mouseClock.getTime())
            eachClickItem.append(clickableLabel[np.where(clickOnClickable == 1)[0]][0])
            #mouse is pressing right now
            mouseIsDown = True
        #check for mouse release
        if sum(buttons) == 0 and mouseIsDown:
            #mouse released
            clicksTotal += clickOnClickable

            #change opacity
            clicking = clickables[clickOnClickable ==1][0]

            #set opacity
            for n,i in enumerate(clickables):
                i.opacity = 1
            clicking.opacity = 0.25

            mouseIsDown = False
      End Routine:
        #undraw,reset opacity
        for i in clickables:
            i.setAutoDraw(False)
            i.opacity = 1
            if trlType[trlCntTotal] == 0:
                i.size = i.size/visualProbeSizeScalar
            else:
                i.size = i.size*visualProbeSizeScalar
        win.flip()

        #resets
        kb.clearEvents()
        probeMouse.setVisible(0)

        try:
            #add mouse activity
            trials.addData('probeMouse.x', probeMouse.x)
            trials.addData('probeMouse.y', probeMouse.y)
            trials.addData('probeMouse.leftButton', probeMouse.leftButton)
            trials.addData('probeMouse.midButton', probeMouse.midButton)
            trials.addData('probeMouse.rightButton', probeMouse.rightButton)
            trials.addData('probeMouse.time', probeMouse.time)
            trials.addData('probeMouse.mouseOnProbes', probeMouse.clickOn)

            #add data about probe information
            for label,path in zip(clickableLabel,clickables):
                thisExp.addData(label,path._imName)

            #record position for each probe item
            thisExp.addData('probeLocationArr',probePosArr)
            #record the final response
            thisExp.addData('rspIndex',clickOnClickable)
            thisExp.addData('rsp',clickableLabel[np.where(clickOnClickable == 1)[0]][0])
            thisExp.addData('rspPath',clickables[np.where(clickOnClickable == 1)[0]][0]._imName)

            #record RT
            thisExp.addData('rt',eachClickTime[0])
            thisExp.addData('timeEachClick', eachClickTime)
            thisExp.addData('itemEachClick', eachClickItem)
            thisExp.addData('missingRsp',False)
        except:
            thisExp.addData('missingRsp',True)
  Routine distractor
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    CodeComponent drawDistractor
      Code Type = Py
      Begin Routine:
        visualDistractor.setAutoDraw(True)
        categoricalDistractor.setAutoDraw(True)

        clock.reset()
        kb.clock.reset()
        kb.clearEvents()

        win.flip()
      Each Frame:
        continuing = True
        while clock.getTime() <= distractorT:
            key = kb.getKeys(['escape'], waitRelease=False)
            if 'escape' in key:
                  core.quit()
      End Routine:
        visualDistractor.setAutoDraw(False)
        categoricalDistractor.setAutoDraw(False)
        win.flip()
    CodeComponent elRecord_distractor
      Code Type = Py
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      Begin Routine:
        this_epoch = 'distractor'
        aaa = core.monotonicClock.getTime
        thisExp.addData(this_epoch+'Start',str(aaa()))

        if eyetracking == 1:
            #el_tracker.startRecording(1, 1, 1, 1)
            el_tracker.sendMessage(this_epoch)
      End Routine:
        aaa = core.monotonicClock.getTime
        thisExp.addData(this_epoch+'End',str(aaa()))
  Routine instr
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  Routine drift_check
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    CodeComponent drift_check_code
      Code Type = Py
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      Begin Routine:
        if eyetracking == 1:
            # drift-check and re-do camera setup if ESCAPE is pressed
            try:
                error = el_tracker.doDriftCorrect(int(scn_width/2.0),
                                                  int(scn_height/2.0), 1, 1)
                # break following a success drift-check
            except:
                continue
            # put tracker in idle/offline mode before recording
            el_tracker.setOfflineMode()
Flow
  Routine loadExpVar
  Routine connectEL
  LoopInitiator expBlk loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = blkTotal
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    Routine blkInit
    Routine drift_check
    LoopInitiator trials loopType="TrialHandler"
      loopType = random
      nReps = trlEachBlk
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      Routine trlInit
      Routine fixationRest
      Routine stim
      Routine preCueRest
      Routine retrocue
      Routine delay
      LoopInitiator distractorLoop loopType="TrialHandler"
        isTrials = False
        loopType = random
        nReps = 0
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        Routine distractor
      LoopTerminator distractorLoop
      Routine probe
      Routine ITI
    LoopTerminator trials
    Routine IBI
  LoopTerminator expBlk
  Routine terminateExp
