PsychoPy2experiment version="2024.2.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = psychedeLights_temp
  keyboardBackend = ioHub
  logging level = error
  runMode = 0
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Routines
  Routine fixationRest
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    CodeComponent drawFixation
      Code Type = Py
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      Begin Routine:
        cueCircColor.setAutoDraw(True)
        fixCircMask.setAutoDraw(True)

        clock.reset()
        kb.clock.reset()
        kb.clearEvents()

        win.flip()
      Each Frame:
        continuing = True
        while clock.getTime() <= fixationT:
            key = kb.getKeys(['space', 'escape'], waitRelease=False)
            if 'escape' in key:
                  core.quit()
    CodeComponent elRecord_fixation
      Code Type = Py
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      Begin Routine:
        this_epoch = 'fixation'
        aaa = core.monotonicClock.getTime
        thisExp.addData('fixationStart',str(aaa()))
        if eyetracking == 1:
            # get a reference to the currently active EyeLink connection
            el_tracker = pylink.getEYELINK()

            try:
                #start recording
                el_tracker.startRecording(1, 1, 1, 1)
                #send message to tracker to count trial number
                el_tracker.sendMessage('TRIALID %s' % str(trlId))
                el_tracker.sendMessage('fixationRest')
            except RuntimeError as error:
                print("ERROR:", error)
                abort_trial()
      End Routine:
        aaa = core.monotonicClock.getTime
        thisExp.addData('fixationEnd',str(aaa()))
  Routine stim
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    CodeComponent drawVisualStim
      Code Type = Py
      Begin Routine:
        imLeft.setImage(df['leftImagePath'][trlCntTotal].replace(os.sep, "/"))
        imRight.setImage(df['rightImagePath'][trlCntTotal].replace(os.sep, "/"),)

        clock.reset()
        kb.clock.reset()
        kb.clearEvents()

        imLeft.setAutoDraw(True)
        imRight.setAutoDraw(True)




        win.flip()
      Each Frame:
        continuing = True
        while clock.getTime() <= stimT:
            pass
      End Routine:
        imLeft.setAutoDraw(False)
        imRight.setAutoDraw(False)

        #add other info
        thisExp.addData('stimT', stimT)
    CodeComponent elRecord_stim
      Code Type = Py
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      Begin Routine:
        this_epoch = 'stim'
        aaa = core.monotonicClock.getTime
        thisExp.addData(this_epoch+'Start',str(aaa()))

        if eyetracking == 1:
            el_tracker.sendMessage(this_epoch)
      End Routine:
        aaa = core.monotonicClock.getTime
        thisExp.addData(this_epoch+'End',str(aaa()))
  Routine loadExpVar
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    CodeComponent stimParams
      Code Type = Py
      Before Experiment:
        import numpy as np  # whole numpy lib is available, prepend 'np.'
        import pandas as pd
        import random
        import os  # handy system and path functions
        import sys  # to get file system encoding
        import glob
      Begin Experiment:
        eyetracking = 0

        imageFilePath = ''

        """trial countdown related variables"""
        #category information
        uniqueCategories = ['shoppingcart', 'ferriswheel', 'circus', 'house', 'playground',
                            'bench', 'gasstation', 'schoolbus', 'airport']
        uniqueCategoriesCnt = len(uniqueCategories)

        imEachCat = 12 #how many images are in 1 category
        trlTotal = uniqueCategoriesCnt*imEachCat*2 #total trial = 9 categories * #images in each category *2 repetition
        trlEachBlk = 12 #how many trials are in each block
        blkTotal = int(trlTotal/trlEachBlk)

        #distractor trials perc
        distractorPerc = 0.3

        #example label
        distractorLabels = ['shopica', 'ferriwee', 'cicu', 'huse', 'paygund',
                            'benc', 'gatation', 'scolbu', 'irpo']
        distractorMapping = dict(zip(uniqueCategories,distractorLabels))

        #init counter
        trlCntTotal = 0

        """timing related params"""
        fixationT = 0.5
        stimT = 3
        retrocueT = 0.5
        noisePatchT = 0.25
        preCueRestT = 0.5
        delayT = 3
        noDistractorDelayT = 2
        distractorT = 1.5
        distractorRspT = 1.5
        probeT = 5
        itiT = 0.5

        """display relayed variables"""
        #init position/size related params
        leftImPos = [-0.2,0]
        rightImPos = [0.2,0]
        fixSize = np.array([0.12,0.12])#np.array([0.16,0.16])
        probeSize = [0.18,0.18]
        probePosVarX = 0.25
        probePosVarY = 0.12

        #other variables
        probePosArr = np.asarray([[-1*probePosVarX,probePosVarY],[0,probePosVarY],[probePosVarX,probePosVarY],
                                  [-1*probePosVarX,-1*probePosVarY],[0,-1*probePosVarY],[probePosVarX,-1*probePosVarY],])

        textSize = 0.03
        visualProbeSizeScalar = 1 #np.sqrt(2)

        #Cue colors
        cueColArr = [[0,128,0],[128,0,128]] #green,purple
        cueColDefault = [128,115,96]


        #
        clock = core.Clock()
        kb = keyboard.Keyboard()
    CodeComponent loadImages
      Code Type = Py
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      Begin Experiment:
        import newDistrTempGenConditionFile
        ouch = True
        while ouch:
            try:
                # Call the main function
                newDistrTempGenConditionFile.main()
                ouch = False
            except ValueError:
                print('b')
                continue

        df = pd.read_csv('updatedProbeTempCondFile.csv')
      Begin Routine:
        """Create visual objects"""
        #create fixation circle and retrocue
        #fixation cross
        fixCircMask = visual.ImageStim(win,image = imageFilePath + 'visualObj/fixCirc.png',size= fixSize)
        retrocueMask = visual.ImageStim(win,image = imageFilePath + 'visualObj/retrocue.png',size= fixSize)
        #color
        cueCircColor = visual.Polygon(win,edges = 4,radius=1,ori = 45,colorSpace = 'rgb255',fillColor=cueColDefault,size= fixSize/2)
        #create memory items
        imLeft = visual.ImageStim(win, )
        imRight = visual.ImageStim(win, )
        imRight.setPos(rightImPos)
        imLeft.setPos(leftImPos)

        #create noise patch
        noisePatchLeft = visual.ImageStim(win,image = imageFilePath + 'visualObj/noiseGauss50.png')
        noisePatchRight = visual.ImageStim(win,image = imageFilePath + 'visualObj/noiseGauss50.png')
        noisePatchLeft.setPos(leftImPos)
        noisePatchRight.setPos(rightImPos)

        #create the probestims
        #visual condition
        probeArr = np.asarray([visual.ImageStim(win,image = None,size = probeSize) for i in range(6)])

        #create distractor
        visualDistractor = visual.ImageStim(win,image = None)
        verbalDistractor = visual.TextStim(win,text = '',height = textSize, bold=True)
        instrTxt = visual.TextStim(win=win, name='instrTxt',
                text="",
                font='Open Sans',
                pos=(0, 0.2), height=0.03, wrapWidth=None, ori=0.0,
                color='white', colorSpace='rgb', opacity=0.6,
                languageStyle='LTR',
                depth=0.0);
  Routine ITI
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    CodeComponent elRecord_iti
      Code Type = Auto->JS
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      Begin Routine:
        aaa = core.monotonicClock.getTime
        thisExp.addData('itiStart',str(aaa()))
        this_epoch = 'ITI'

        if eyetracking == 1:
            el_tracker.sendMessage('ITI')
      End Routine:
        aaa = core.monotonicClock.getTime
        thisExp.addData('itiEnd',str(aaa()))
        if eyetracking == 1:

            el_tracker.sendMessage('trialEnd')
            el_tracker.sendMessage('!V TRIAL_VAR TRIALID %s'% str(trlId))
            el_tracker.stopRecording()
    CodeComponent resets
      Code Type = Py
      Begin Routine:
        #add 1 to total trl count
        trlCntTotal +=1
        trlCntThisBlk +=1

        clock.reset()
        kb.clock.reset()
        kb.clearEvents()
      Each Frame:
        continuing = True
        while clock.getTime() <= itiT:
            key = kb.getKeys([ 'escape'], waitRelease=False)
            if 'escape' in key:
                  core.quit()
      End Routine:
        clock.reset()
        kb.clock.reset()
        kb.clearEvents()
  Routine trlInit
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    CodeComponent initTrlParams
      Code Type = Py
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      Begin Routine:
        """create trial id"""
        trlId = (expInfo['participant'],trlCntThisBlk,expBlk.thisN)

        """cue related params"""
        cueCircColor.fillColor = cueColDefault
        if df['trlType'][trlCntTotal] == 'visual':
            cueCorThis = cueColArr[0] #green
        else:
            cueCorThis = cueColArr[1] #purple


        """distractor related params"""
        distractorType = None
        distractorCtrl = 1 #default add distractor
        visualDistractor.opacity = 0
        verbalDistractor.setOpacity(0)

        if df['distractorType'][trlCntTotal] == 'noDistractor': #no distactor
            distractorCtrl = 0
        else: #visual
            distractorCtrl = 1
            if df['trlType'][trlCntTotal] == 'visual' and  df['distractorType'][trlCntTotal] == 'congruent': #visual distractor:
                instrTxt.setText('Scrambled?')
                visualDistractor.setImage(df['distractorPath'][trlCntTotal].replace(os.sep, "/"))
                visualDistractor.opacity = 1
            elif df['trlType'][trlCntTotal] == 'verbal' and  df['distractorType'][trlCntTotal] == 'incongruent': #visual distractor:
                instrTxt.setText('Scrambled?')
                visualDistractor.setImage(df['distractorPath'][trlCntTotal].replace(os.sep, "/"))
                visualDistractor.opacity = 1
            elif df['trlType'][trlCntTotal] == 'visual' and  df['distractorType'][trlCntTotal] == 'incongruent': #verbal distractor:
                instrTxt.setText('Manmade?')
                verbalDistractor.setText(df['distractorPath'][trlCntTotal])
                verbalDistractor.setOpacity(1)
            else:
                instrTxt.setText('Manmade?')
                verbalDistractor.setText(df['distractorPath'][trlCntTotal])
                verbalDistractor.setOpacity(1)

        """probe related params"""
        probePathThis = df[['probe1Path', 'probe2Path', 'probe3Path', 'probe4Path',
               'probe5Path', 'probe6Path']].iloc[trlCntTotal].values
        clickableLabel = df[['probe1', 'probe2', 'probe3', 'probe4',
               'probe5', 'probe6']].iloc[trlCntTotal].values
        for i in range(6):
           probeArr[i].setImage(probePathThis[i].replace(os.sep, "/"))
           probeArr[i].setPos(probePosArr[i])
      End Routine:
        thisExp.addData('TRIALID',trlId)
        for col,val in zip(df.iloc[trlCntTotal].index,df.iloc[trlCntTotal]):
            thisExp.addData(col,val)
  Routine retrocue
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    CodeComponent drawRetrocue
      Code Type = Py
      Begin Routine:
        if df['cuedItem'][trlCntTotal] == 'left':
            thisOri = 180
        else:
            thisOri = 0

        retrocueMask.ori = thisOri

        cueCircColor.colorSpace='rgb255'
        cueCircColor.color = cueCorThis
        cueCircColor.setAutoDraw(True)
        retrocueMask.setAutoDraw(True) #draw retrocue


        clock.reset()
        kb.clock.reset()
        kb.clearEvents()

        win.flip()
      Each Frame:
        continuing = True
        while clock.getTime() <= retrocueT:
            key = kb.getKeys(['space', 'escape'], waitRelease=False)
            if 'escape' in key:
                  core.quit()
      End Routine:
        cueCircColor.setAutoDraw(False)
        retrocueMask.setAutoDraw(False)
    CodeComponent elRecord_retrocue
      Code Type = Py
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      Begin Routine:
        this_epoch = 'retrocue'
        aaa = core.monotonicClock.getTime
        thisExp.addData(this_epoch+'Start',str(aaa()))

        if eyetracking == 1:
            #el_tracker.startRecording(1, 1, 1, 1)
            el_tracker.sendMessage(this_epoch)
      End Routine:
        aaa = core.monotonicClock.getTime
        thisExp.addData(this_epoch+'End',str(aaa()))
  Routine blkInit
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    CodeComponent initBlkParams
      Code Type = Py
      Begin Routine:
        trlCntThisBlk = 0
  Routine IBI
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = you've reached the end of this block, press space when you're ready to continue
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    KeyboardComponent ibiSpace
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine delay
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    CodeComponent delayCode
      Code Type = Py
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      Begin Routine:
        cueCircColor.setAutoDraw(True)
        fixCircMask.setAutoDraw(True)
        noisePatchRight.setAutoDraw(False)
        noisePatchLeft.setAutoDraw(False)

        clock.reset()
        kb.clearEvents()

        win.flip()
      Each Frame:
        continuing = True
        while clock.getTime() <= noDistractorDelayT:

            key = kb.getKeys(['escape'], waitRelease=False)
            if 'escape' in key:
                core.quit()

        cueCircColor.setAutoDraw(False)
        fixCircMask.setAutoDraw(False)


        while (clock.getTime() >= noDistractorDelayT) & (distractorCtrl == 1) & (clock.getTime() < noDistractorDelayT + distractorT):
            visualDistractor.setAutoDraw(True)
            verbalDistractor.setAutoDraw(True)
            win.flip()

        cueCircColor.setAutoDraw(True)
        fixCircMask.setAutoDraw(True)
        visualDistractor.setAutoDraw(False)
        verbalDistractor.setAutoDraw(False)
        win.flip()

        while (clock.getTime() < delayT):
            pass
      End Routine:
        noisePatchRight.setAutoDraw(False)
        noisePatchLeft.setAutoDraw(False)

        fixCircMask.setAutoDraw(False)
        cueCircColor.setAutoDraw(False)

        win.flip()
    CodeComponent elRecord_delay
      Code Type = Py
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      Begin Routine:
        this_epoch = 'delay'
        aaa = core.monotonicClock.getTime
        thisExp.addData(this_epoch+'Start',str(aaa()))

        if eyetracking == 1:
            #el_tracker.startRecording(1, 1, 1, 1)
            el_tracker.sendMessage(this_epoch)
      End Routine:
        aaa = core.monotonicClock.getTime
        thisExp.addData(this_epoch+'End',str(aaa()))
  Routine preCueRest
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    CodeComponent drawNoise
      Code Type = Py
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      Begin Routine:
        noisePatchRight.setAutoDraw(True)
        noisePatchLeft.setAutoDraw(True)

        clock.reset()
        kb.clearEvents()

        win.flip()
      Each Frame:
        continuing = True
        while clock.getTime() <= noisePatchT:
            key = kb.getKeys(['escape'], waitRelease=False)
            if 'escape' in key:
                  core.quit()
        noisePatchRight.setAutoDraw(False)
        noisePatchLeft.setAutoDraw(False)
        win.flip()

        while clock.getTime() <= preCueRestT:
            pass
      End Routine:
        cueCircColor.setAutoDraw(False)
        fixCircMask.setAutoDraw(False)
    CodeComponent elRecord_preCue
      Code Type = Py
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      Begin Routine:
        this_epoch = 'preCueRest'
        aaa = core.monotonicClock.getTime
        thisExp.addData(this_epoch+'Start',str(aaa()))

        if eyetracking == 1:
            #el_tracker.startRecording(1, 1, 1, 1)
            el_tracker.sendMessage(this_epoch)
      End Routine:
        aaa = core.monotonicClock.getTime
        thisExp.addData(this_epoch+'End',str(aaa()))
  Routine connectEL
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    CodeComponent connectTracker
      Code Type = Py
      Before Experiment:
        import platform
        from PIL import Image  # for preparing the Host backdrop image
        from string import ascii_letters
        import time

        # import eyelink libs
        import pylink
        from EyeLinkCoreGraphicsPsychoPy import EyeLinkCoreGraphicsPsychoPy
      Begin Experiment:
        if eyetracking == 0:
            # this is adapted from the SR research's eyelink tutorial code
            #parameters to change
            calib_style = 13 #9 for head fixed, 13 for remote
            samprate = 1000 #250, 500, 1000, or 2000
            calib_tar_size = 24 #size for the calibration target

            """change this"""
            width_param = 53.0
            distance_param =70.0


            #create a folder to store all edf files, call this folder 'results'
            edf_folder = 'C:/Users/yhung/Documents/elRaw_psychedeLights'
            if not os.path.exists(edf_folder):
                os.makedirs(edf_folder)

            # We download EDF data file from the EyeLink Host PC to the local hard
            # drive at the end of each testing session, here we rename the EDF to
            # include session start date/time
            time_str = time.strftime("_%Y_%m_%d_%H_%M", time.localtime())
            session_identifier = str(expInfo['participant']) + time_str

            # create a folder for the current testing session in the "results" folder
            session_folder = os.path.join(edf_folder, session_identifier)
            if not os.path.exists(session_folder):
                os.makedirs(session_folder)


            #helper function for displaying text
            def clear_screen(win):
                """ clear up the PsychoPy window"""

                win.fillColor = genv.getBackgroundColor()
                win.flip()
            def show_msg(win, text, wait_for_keypress=True):
                """ Show task instructions on screen"""

                msg = visual.TextStim(win, text,
                                      color=genv.getForegroundColor(),
                                      wrapWidth=scn_width/2)
                clear_screen(win)
                msg.draw()
                win.flip()

                # wait indefinitely, terminates upon any key press
                if wait_for_keypress:
                    event.waitKeys(keyList = ['space','escape'],maxWait = 60)
                    clear_screen(win)

            #function to terminate task and retrieve the EDF data file from the host PC and
            #download to the display pc
            def terminate_task():
                el_tracker = pylink.getEYELINK()

                if el_tracker.isConnected():

                    # Put tracker in Offline mode
                    el_tracker.setOfflineMode()

                    # Clear the Host PC screen and wait for 500 ms
                    el_tracker.sendCommand('clear_screen 0')
                    pylink.msecDelay(500)

                    # Close the edf data file on the Host
                    el_tracker.closeDataFile()

                    # Show a file transfer message on the screen
                    msg = 'EDF data is transferring from EyeLink Host PC...'
                    show_msg(win, msg, wait_for_keypress=False)

                    # Download the EDF data file from the Host PC to a local data folder
                    # parameters: source_file_on_the_host, destination_file_on_local_drive
                    local_edf = os.path.join(session_folder, session_identifier + '.EDF')
                    try:
                        el_tracker.receiveDataFile(edf_file, local_edf)
                    except RuntimeError as error:
                        print('ERROR:', error)

                    # Close the link to the tracker.
                    el_tracker.close()

                # close the PsychoPy window
                win.close()

                # quit PsychoPy
                core.quit()
                sys.exit()

            def abort_trial():
                """Ends recording """

                el_tracker = pylink.getEYELINK()

                # Stop recording
                if el_tracker.isRecording():
                    # add 100 ms to catch final trial events
                    pylink.pumpDelay(100)
                    el_tracker.stopRecording()

                # clear the screen
                clear_screen(win)
                # Send a message to clear the Data Viewer screen
                bgcolor_RGB = (116, 116, 116)
                el_tracker.sendMessage('!V CLEAR %d %d %d' % bgcolor_RGB)

                # send a message to mark trial end
                el_tracker.sendMessage('TRIAL_RESULT %d' % pylink.TRIAL_ERROR)
      Begin Routine:
        # Step 1: Connect to the EyeLink Host PC
        host_ip = "100.1.1.1"
        if eyetracking == 1:
            try:
                el_tracker = pylink.EyeLink(host_ip)
            except RuntimeError as error:
                print('ERROR:', error)
                core.quit()
                sys.exit()

            # Step 2: Open an EDF data file on the Host PC
            edf_file = str(expInfo['participant']) + ".EDF"
            try:
                el_tracker.openDataFile(edf_file)
            except RuntimeError as err:
                print('ERROR:', err)
                # close the link if we have one open
                if el_tracker.isConnected():
                    el_tracker.close()
                core.quit()
                sys.exit()

            # Step 3: Configure the tracker
            # Put the tracker in offline mode before we change tracking parameters
            el_tracker.setOfflineMode()
            # File and Link data control
            # what eye events to save in the EDF file, include everything by default
            file_event_flags = 'LEFT,RIGHT,FIXATION,SACCADE,BLINK,MESSAGE,BUTTON,INPUT'
            file_sample_flags = 'LEFT,RIGHT,GAZE,GAZERES,HREF,RAW,PUPIL,AREA,HTARGET,STATUS,INPUT'
            # what eye events to make available over the link, include everything by default
            link_event_flags = 'LEFT,RIGHT,FIXATION,SACCADE,BLINK,BUTTON,FIXUPDATE,INPUT'
            link_sample_flags = 'LEFT,RIGHT,GAZE,GAZERES,AREA,HTARGET,STATUS,INPUT'
            el_tracker.sendCommand("file_event_filter = %s" % file_event_flags)
            el_tracker.sendCommand("file_sample_data = %s" % file_sample_flags)
            el_tracker.sendCommand("link_event_filter = %s" % link_event_flags)
            el_tracker.sendCommand("link_sample_data = %s" % link_sample_flags)
            #set calibration style
            el_tracker.sendCommand("calibration_type = HV%s" % str(calib_style))
            #set sampling rate
            el_tracker.sendCommand("sample_rate %s" % str(samprate))

            # Step 4: set up a graphics environment for calibration
            # get the native screen resolution used by PsychoPy
            scn_width, scn_height = win.size
            # resolution fix for Mac retina displays
            if 'Darwin' in platform.system():
                if use_retina:
                    scn_width = int(scn_width/2.0)
                    scn_height = int(scn_height/2.0)
            # Pass the display pixel coordinates (left, top, right, bottom) to the tracker
            el_coords = "screen_pixel_coords = 0 0 %d %d" % (scn_width - 1, scn_height - 1)
            el_tracker.sendCommand(el_coords)
            # Write a DISPLAY_COORDS message to the EDF file
            # Data Viewer needs this piece of info for proper visualization
            dv_coords = "DISPLAY_COORDS  0 0 %d %d" % (scn_width - 1, scn_height - 1)
            el_tracker.sendMessage(dv_coords)
            # Configure a graphics environment (genv) for tracker calibration
            genv = EyeLinkCoreGraphicsPsychoPy(el_tracker, win)
            # Set background and foreground colors for the calibration target
            # in PsychoPy, (-1, -1, -1)=black, (1, 1, 1)=white, (0, 0, 0)=mid-gray
            foreground_color = (-1, -1, -1)
            background_color = win.color
            genv.setCalibrationColors(foreground_color, background_color)
            genv.setTargetSize(calib_tar_size)
            # Request Pylink to use the PsychoPy window we opened above for calibration
            pylink.openGraphicsEx(genv)
            task_msg = 'Press <space>, then <enter> to start calibration'
            show_msg(win, task_msg)
            print('line69')

            try:
                el_tracker.doTrackerSetup()
            except RuntimeError as err:
                print('ERROR:', err)
                el_tracker.exitCalibration()
        else:
            continueRoutine = False
      End Routine:
        #dont record yet
        if eyetracking == 1:
            el_tracker.setOfflineMode()
        win.mouseVisible = True
  Routine terminateExp
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    CodeComponent closeEl
      Code Type = Auto->JS
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      Begin Routine:
        if eyetracking == 1:

            # Step 7: disconnect, download the EDF file, then terminate the task
            terminate_task()
  Routine categoryProbe
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    CodeComponent elRecord_probe_cat
      Code Type = Py
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      Begin Routine:
        this_epoch = 'probe'
        aaa = core.monotonicClock.getTime
        thisExp.addData(this_epoch+'Start',str(aaa()))

        if eyetracking == 1:
            el_tracker.sendMessage(this_epoch)
      End Routine:
        aaa = core.monotonicClock.getTime
        thisExp.addData(this_epoch+'End',str(aaa()))
    PolygonComponent transparentPlaceHolder_cat
      fillColor = 0.0000, 0.0000, 0.0000
      opacity = 0
      saveStartStop = False
      shape = triangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $probeT
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    CodeComponent drawProbe_cat
      Code Type = Py
      Begin Experiment:
        probeMouse = event.Mouse(newPos = (0,0))
      Begin Routine:
        mouseIsDown = False

        #record continuous mouse activity
        probeMouse.x = []
        probeMouse.y = []
        probeMouse.leftButton = []
        probeMouse.midButton = []
        probeMouse.rightButton = []
        probeMouse.time = []
        probeMouse.clickOn = []

        #other mouse related variables
        eachClickTime = []
        eachClickItem = []

        #the following params are used for indexing
        a = trlCntTotal*sum(relatedProbeNum)
        b = trlCntTotal*sum(relatedProbeNum)+sum(relatedProbeNum)
        #c = trlCntTotal*sum(unreledProbeNum)
        #d = trlCntTotal*sum(unreledProbeNum)+2

        #grab the position params for different probes.
        corrPos = probePosArr[0]
        distractorPos = probePosArr[1]
        relPos = probePosArr[2:2+sum(relatedProbeNum)]
        distractorRelPos = probePosArr[2+sum(relatedProbeNum):2+sum(relatedProbeNum)+sum(relatedProbeNum)]
        #unrelPos = probePosArr[2+sum(relatedProbeNum):2+sum(relatedProbeNum)+sum(unreledProbeNum)]

        #get all probe items
        clickables = [corrProbeArr[trlCntTotal],distractorProbeArr[trlCntTotal]]

        #set position
        corrProbeArr[trlCntTotal].setPos(corrPos)
        distractorProbeArr[trlCntTotal].setPos(distractorPos)
        for i,p in zip(relProbeArr[a:b],relPos):
            clickables.append(i)
            i.setPos(p)
            i.setAutoDraw(True)
        for i,p in zip(distractorRelProbeArr[a:b],distractorRelPos):
            clickables.append(i)
            i.setPos(p)
            i.setAutoDraw(True)

        """
        for i,p in zip(unrelProbeArr[c:d],unrelPos):
            clickables.append(i)
            i.setPos(p)
            i.setAutoDraw(True)
        """
        clickables = np.asarray(clickables)
        clicksTotal = np.zeros(len(clickables))
        clickOnClickable = np.zeros(len(clickables))

        #prepare to draw
        corrProbeArr[trlCntTotal].setAutoDraw(True)
        distractorProbeArr[trlCntTotal].setAutoDraw(True)

        #resets
        clock.reset()
        kb.clearEvents()
        probeMouse.clickReset(buttons=(0, 1, 2))
        event.clearEvents('mouse')
        probeMouse.mouseClock.reset()

        #set mouse starting position
        probeMouse.setPos((0,0))
        probeMouse.setVisible(1)

        win.flip()
      Each Frame:
        x, y = probeMouse.getPos()
        probeMouse.x.append(x)
        probeMouse.y.append(y)
        buttons = probeMouse.getPressed()

        probeMouse.leftButton.append(buttons[0])
        probeMouse.midButton.append(buttons[1])
        probeMouse.rightButton.append(buttons[2])
        probeMouse.time.append(probeMouse.mouseClock.getTime())

        hoverOnClickable = np.asarray([i.contains(probeMouse) for i in clickables])
        probeMouse.clickOn.append(hoverOnClickable)


        key = kb.getKeys(['space', 'escape'], waitRelease=False)
        if 'space' in key:
            continueRoutine  = False
        if 'escape' in key:
            core.quit()
        #check for mouse press
        if sum(buttons) and mouseIsDown == False and sum(hoverOnClickable):
            clickOnClickable = np.where(hoverOnClickable,1,0)

            eachClickTime.append(probeMouse.mouseClock.getTime())
            eachClickItem.append(clickableLabel[np.where(clickOnClickable == 1)[0]][0])
            #mouse is pressing right now
            mouseIsDown = True
        #check for mouse release
        if sum(buttons) == 0 and mouseIsDown:
            #mouse released
            clicksTotal += clickOnClickable

            #change opacity
            clicking = clickables[clickOnClickable ==1][0]

            #set opacity
            for n,i in enumerate(clickables):
                i.opacity = 1
            clicking.opacity = 0.25

            mouseIsDown = False
      End Routine:
        corrProbeArr[trlCntTotal].setAutoDraw(False)
        distractorProbeArr[trlCntTotal].setAutoDraw(False)

        for i,p in zip(relProbeArr[a:b],relPos):
            i.setAutoDraw(False)

        for i,p in zip(distractorRelProbeArr[a:b],distractorRelPos):
            i.setAutoDraw(False)
        """
        for i,p in zip(unrelProbeArr[a:b],unrelPos):
            i.setAutoDraw(False)
        """
        win.flip()
        kb.clearEvents()

        probeMouse.setVisible(0)

        #

        #add mouse activity
        trials.addData('probeMouse.x', probeMouse.x)
        trials.addData('probeMouse.y', probeMouse.y)
        trials.addData('probeMouse.leftButton', probeMouse.leftButton)
        trials.addData('probeMouse.midButton', probeMouse.midButton)
        trials.addData('probeMouse.rightButton', probeMouse.rightButton)
        trials.addData('probeMouse.time', probeMouse.time)
        trials.addData('probeMouse.mouseOnProbes', probeMouse.clickOn)

        #add data about probe information
        for label,path in zip(clickableLabel,clickables):
            thisExp.addData(label,path._imName)

        #record position for each probe item
        thisExp.addData('probeLocationArr',probePosArr)
        #record the final response
        thisExp.addData('rspIndex',clickOnClickable)
        thisExp.addData('rsp',clickableLabel[np.where(clickOnClickable == 1)[0]][0])
        thisExp.addData('rspPath',clickables[np.where(clickOnClickable == 1)[0]][0]._imName)

        #record RT
        thisExp.addData('rt',eachClickTime[0])
        thisExp.addData('timeEachClick', eachClickTime)
        thisExp.addData('itemEachClick', eachClickItem)
  Routine probe
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    CodeComponent elRecord_probe
      Code Type = Py
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      Begin Routine:
        this_epoch = 'probe'
        aaa = core.monotonicClock.getTime
        thisExp.addData(this_epoch+'Start',str(aaa()))

        if eyetracking == 1:
            el_tracker.sendMessage(this_epoch)
      End Routine:
        aaa = core.monotonicClock.getTime
        thisExp.addData(this_epoch+'End',str(aaa()))
    PolygonComponent transparentPlaceHolder
      fillColor = 0.0000, 0.0000, 0.0000
      opacity = 0
      saveStartStop = False
      shape = triangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $probeT
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    CodeComponent drawProbe
      Code Type = Py
      Begin Experiment:
        probeMouse = event.Mouse(newPos = (0,0))
      Begin Routine:
        mouseIsDown = False

        #record continuous mouse activity
        probeMouse.x = []
        probeMouse.y = []
        probeMouse.leftButton = []
        probeMouse.midButton = []
        probeMouse.rightButton = []
        probeMouse.time = []
        probeMouse.clickOn = []

        #other mouse related variables
        eachClickTime = []
        eachClickItem = []

        clicksTotal = np.zeros(len(probeArr))
        clickOnClickable = np.zeros(len(probeArr))

        #prepare to draw
        for i in probeArr:
            i.setAutoDraw(True)

        #resets
        clock.reset()
        kb.clearEvents()
        probeMouse.clickReset(buttons=(0, 1, 2))
        event.clearEvents('mouse')
        probeMouse.mouseClock.reset()

        #set mouse starting position
        probeMouse.setPos((0,0))
        probeMouse.setVisible(1)

        win.flip()
      Each Frame:
        x, y = probeMouse.getPos()
        probeMouse.x.append(x)
        probeMouse.y.append(y)
        buttons = probeMouse.getPressed()

        probeMouse.leftButton.append(buttons[0])
        probeMouse.midButton.append(buttons[1])
        probeMouse.rightButton.append(buttons[2])
        probeMouse.time.append(probeMouse.mouseClock.getTime())

        hoverOnClickable = np.asarray([i.contains(probeMouse) for i in probeArr])
        probeMouse.clickOn.append(hoverOnClickable)


        key = kb.getKeys(['escape'], waitRelease=False)
        if 'escape' in key:
            core.quit()
        #check for mouse press
        if sum(buttons) and mouseIsDown == False and sum(hoverOnClickable):
            clickOnClickable = np.where(hoverOnClickable,1,0)

            eachClickTime.append(probeMouse.mouseClock.getTime())
            eachClickItem.append(clickableLabel[np.where(clickOnClickable == 1)[0]][0])
            #mouse is pressing right now
            mouseIsDown = True
        #check for mouse release
        if sum(buttons) == 0 and mouseIsDown:
            #mouse released
            clicksTotal += clickOnClickable

            #change opacity
            clicking = probeArr[clickOnClickable ==1][0]

            #set opacity
            for n,i in enumerate(probeArr):
                i.opacity = 1
            clicking.opacity = 0.25

            mouseIsDown = False
            continueRoutine  = False
      End Routine:
        #undraw,reset opacity
        for i in probeArr:
            i.setAutoDraw(False)
            i.opacity = 1
            if df['trlType'][trlCntTotal] == 'visual':
                i.size = i.size/visualProbeSizeScalar
            else:
                i.size = i.size*visualProbeSizeScalar
        win.flip()

        #resets
        kb.clearEvents()
        probeMouse.setVisible(0)

        try:
            #add mouse activity
            trials.addData('probeMouse.x', probeMouse.x)
            trials.addData('probeMouse.y', probeMouse.y)
            trials.addData('probeMouse.leftButton', probeMouse.leftButton)
            trials.addData('probeMouse.midButton', probeMouse.midButton)
            trials.addData('probeMouse.rightButton', probeMouse.rightButton)
            trials.addData('probeMouse.time', probeMouse.time)
            trials.addData('probeMouse.mouseOnProbes', probeMouse.clickOn)

            #record position for each probe item
            thisExp.addData('probeLocationArr',probePosArr)
            #record the final response
            thisExp.addData('rspIndex',clickOnClickable)
            thisExp.addData('rsp',clickableLabel[np.where(clickOnClickable == 1)[0]][0])
            thisExp.addData('rspPath',probeArr[np.where(clickOnClickable == 1)[0]][0]._imName)

            #record RT
            thisExp.addData('rt',eachClickTime[0])
            thisExp.addData('timeEachClick', eachClickTime)
            thisExp.addData('itemEachClick', eachClickItem)
            thisExp.addData('missingRsp',False)
        except:
            thisExp.addData('missingRsp',True)
  Routine distractor
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    CodeComponent drawDistractor
      Code Type = Py
      Begin Routine:
        visualDistractor.setAutoDraw(True)
        verbalDistractor.setAutoDraw(True)
        instrTxt.setAutoDraw(True)
        clock.reset()
        kb.clock.reset()
        kb.clearEvents()

        win.flip()
      Each Frame:
        continuing = True
        while clock.getTime() <= distractorT:
            key = kb.getKeys(['w','d','escape'], waitRelease=False)

            if 'escape' in key:
                  core.quit()
            elif ('w' in key):
                if df['trlType'][trlCntTotal] == 'visual' and  df['distractorType'][trlCntTotal] == 'congruent':
                    rsp = 'scrambledImage'
                elif df['trlType'][trlCntTotal] == 'verbal' and  df['distractorType'][trlCntTotal] == 'incongruent': #visual distractor:
                    rsp = 'scrambledImage'
                else: #verbal distractor:
                    rsp = 'manmadeImage'
                if df['distractorRealness'][trlCntTotal] == rsp:
                    correct = True
                else:
                    correct = False
            elif ('d' in key):
                if df['trlType'][trlCntTotal] == 'visual' and  df['distractorType'][trlCntTotal] == 'congruent':
                    rsp = 'nonScrambledImage'
                elif df['trlType'][trlCntTotal] == 'verbal' and  df['distractorType'][trlCntTotal] == 'incongruent': #visual distractor:
                    rsp = 'nonScrambledImage'
                else: #verbal distractor:
                    rsp = 'nonManmadeImage'
                if df['distractorRealness'][trlCntTotal] == rsp:
                    correct = True
                else:
                    correct = False
            else:
                rsp = None
                correct = None
      End Routine:
        visualDistractor.setAutoDraw(False)
        verbalDistractor.setAutoDraw(False)
        instrTxt.setAutoDraw(False)
        win.flip()
        if not rsp == None:
            thisExp.addData('distractorRsp',rsp)
            thisExp.addData('distractorRspRealness',correct)
    CodeComponent elRecord_distractor
      Code Type = Py
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      Begin Routine:
        this_epoch = 'distractor'
        aaa = core.monotonicClock.getTime
        thisExp.addData(this_epoch+'Start',str(aaa()))

        if eyetracking == 1:
            #el_tracker.startRecording(1, 1, 1, 1)
            el_tracker.sendMessage(this_epoch)
      End Routine:
        aaa = core.monotonicClock.getTime
        thisExp.addData(this_epoch+'End',str(aaa()))
  Routine instr
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  Routine drift_check
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    CodeComponent drift_check_code
      Code Type = Py
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      Begin Routine:
        if eyetracking == 1:
            # drift-check and re-do camera setup if ESCAPE is pressed
            try:
                error = el_tracker.doDriftCorrect(int(scn_width/2.0),
                                                  int(scn_height/2.0), 1, 1)
                # break following a success drift-check
            except:
                continue
            # put tracker in idle/offline mode before recording
            el_tracker.setOfflineMode()
  Routine delayNoDistractor
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    CodeComponent delayCode_noDistractor
      Code Type = Py
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      Begin Routine:
        cueCircColor.color = cueColDefault

        cueCircColor.setAutoDraw(True)
        fixCircMask.setAutoDraw(True)
        noisePatchRight.setAutoDraw(False)
        noisePatchLeft.setAutoDraw(False)

        clock.reset()
        kb.clearEvents()

        win.flip()
      Each Frame:
        while (clock.getTime() < delayT):
            pass
      End Routine:
        noisePatchRight.setAutoDraw(False)
        noisePatchLeft.setAutoDraw(False)
        cueCircColor.setAutoDraw(False)
        fixCircMask.setAutoDraw(False)

        win.flip()
    CodeComponent elRecord_delay_noDistractor
      Code Type = Py
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      Begin Routine:
        this_epoch = 'delay'
        aaa = core.monotonicClock.getTime
        thisExp.addData(this_epoch+'Start',str(aaa()))

        if eyetracking == 1:
            #el_tracker.startRecording(1, 1, 1, 1)
            el_tracker.sendMessage(this_epoch)
      End Routine:
        aaa = core.monotonicClock.getTime
        thisExp.addData(this_epoch+'End',str(aaa()))
  Routine distractorResponse
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    CodeComponent distractorResponse_code
      Code Type = Py
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      Begin Routine:
        cueCircColor.color = cueColDefault

        cueCircColor.setAutoDraw(True)
        fixCircMask.setAutoDraw(True)
        noisePatchRight.setAutoDraw(False)
        noisePatchLeft.setAutoDraw(False)

        clock.reset()
        kb.clearEvents()

        win.flip()
      Each Frame:
        continuing = True
        while clock.getTime() <= distractorRspT:
            key = kb.getKeys(['w','d','escape'], waitRelease=False)

            if 'escape' in key:
                  core.quit()
            elif ('w' in key):
                if df['trlType'][trlCntTotal] == 'visual' and  df['distractorType'][trlCntTotal] == 'congruent':
                    rsp = 'scrambledImage'
                elif df['trlType'][trlCntTotal] == 'verbal' and  df['distractorType'][trlCntTotal] == 'incongruent': #visual distractor:
                    rsp = 'scrambledImage'
                else: #verbal distractor:
                    rsp = 'manmadeImage'
                if df['distractorRealness'][trlCntTotal] == rsp:
                    correct = True
                else:
                    correct = False
                break
            elif ('d' in key):
                if df['trlType'][trlCntTotal] == 'visual' and  df['distractorType'][trlCntTotal] == 'congruent':
                    rsp = 'nonScrambledImage'
                elif df['trlType'][trlCntTotal] == 'verbal' and  df['distractorType'][trlCntTotal] == 'incongruent': #visual distractor:
                    rsp = 'nonScrambledImage'
                else: #verbal distractor:
                    rsp = 'nonManmadeImage'
                if df['distractorRealness'][trlCntTotal] == rsp:
                    correct = True
                else:
                    correct = False
                break
            else:
                rsp = None
                correct = None

        continueRoutine  = False
      End Routine:
        noisePatchRight.setAutoDraw(False)
        noisePatchLeft.setAutoDraw(False)
        cueCircColor.setAutoDraw(False)
        fixCircMask.setAutoDraw(False)

        win.flip()
        thisExp.addData('distractorRsp',rsp)
        thisExp.addData('distractorRspRealness',correct)
    CodeComponent elDistractorResponse_code
      Code Type = Auto->JS
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      Begin Routine:
        this_epoch = 'distractorResponse'
        aaa = core.monotonicClock.getTime
        thisExp.addData(this_epoch+'Start',str(aaa()))

        if eyetracking == 1:
            #el_tracker.startRecording(1, 1, 1, 1)
            el_tracker.sendMessage(this_epoch)
      End Routine:
        aaa = core.monotonicClock.getTime
        thisExp.addData(this_epoch+'End',str(aaa()))
Flow
  Routine loadExpVar
  Routine connectEL
  LoopInitiator expBlk loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = blkTotal
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    Routine blkInit
    Routine drift_check
    LoopInitiator trials loopType="TrialHandler"
      loopType = random
      nReps = trlEachBlk
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      Routine trlInit
      Routine fixationRest
      Routine stim
      Routine preCueRest
      Routine retrocue
      Routine delayNoDistractor
      LoopInitiator distractorCtrl loopType="TrialHandler"
        loopType = random
        nReps = distractorCtrl
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        Routine distractor
        Routine distractorResponse
      LoopTerminator distractorCtrl
      Routine probe
      Routine ITI
    LoopTerminator trials
    Routine IBI
  LoopTerminator expBlk
  Routine terminateExp
