PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [2560, 1440]
  expName = KeoghRevisedRetrocueTask
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine loadExpVar
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    CodeComponent loadImages
      Code Type = Py
      Before Experiment:
        #libraries
        import numpy as np  # whole numpy lib is available, prepend 'np.'
        import pandas as pd
        import random
        import os  # handy system and path functions
        import sys  # to get file system encoding
        import glob
        import itertools
        import math

        from psychopy import visual, event, core
        import random
      Begin Experiment:
        import CUBE_ONLY_newDistrTempGenConditionFile
        ouch = True
        while ouch:
            try:
                # Call the main function
                CUBE_ONLY_newDistrTempGenConditionFile.main()
                ouch = False
            except ValueError:
                print('b')
                continue

        df = pd.read_csv('Cubeconnie_distance_matched.csv')
      Begin Routine:
        """Create visual objects"""
        #create fixation circle and retrocue
        #fixation cross
        fixCircMask = visual.ImageStim(win,image = imageFilePath + 'visualObj/fixCirc.png',size= fixSize)
        retrocueMask = visual.ImageStim(win,image = imageFilePath + 'visualObj/retrocue.png',size= fixSize)
        locationTracker = visual.ImageStim(win,image = imageFilePath + 'visualObj/square.png',size=(0.5, 0.5))
        #color
        cueCircColor = visual.Polygon(win,edges = 4,radius=1,ori = 45,colorSpace = 'rgb255',fillColor=cueColDefault,size= fixSize/2)
        #create memory items
        imLeft = visual.ImageStim(win, )
        imRight = visual.ImageStim(win, )
        imRight.setPos(rightImPos)
        imLeft.setPos(leftImPos)

        #create noise patch
        noisePatchLeft = visual.ImageStim(win,image = imageFilePath + 'visualObj/noiseGauss50.png')
        noisePatchRight = visual.ImageStim(win,image = imageFilePath + 'visualObj/noiseGauss50.png')
        noisePatchLeft.setPos(leftImPos)
        noisePatchRight.setPos(rightImPos)

        #create the probestims
        #visual condition
        probeArr = np.asarray([visual.ImageStim(win,image = None,size = probeSize) for i in range(6)])

        #create distractor
        visualDistractor = visual.ImageStim(win,image = None)
        verbalDistractor = visual.TextStim(win,text = '',height = textSize, bold=True)
        instrTxt = visual.TextStim(win=win, name='instrTxt',
                text="",
                font='Open Sans',
                pos=(0, 0.2), height=0.03, wrapWidth=None, ori=0.0,
                color='white', colorSpace='rgb', opacity=0.6,
                languageStyle='LTR',
                depth=0.0);
    CodeComponent stimParams
      Code Type = Py
      Begin Experiment:
        imageFilePath = ''

        """trial countdown related variables"""
        #category information
        uniqueCategories = ['cube']
        uniqueCategoriesCnt = len(uniqueCategories)

        trlTotal = len(df)
        trlEachBlk = 60  #counting # of images
        blkTotal = math.ceil(trlTotal / trlEachBlk)
        print(blkTotal)

        #init counter
        trlCntTotal = 0

        """timing related params"""
        fixationT = 0.5
        stimT = 3
        retrocueT = 0.5
        noisePatchT = 0.25
        preCueRestT = 0.5
        delayT = 3
        noDistractorDelayT = 2
        distractorT = 1.5
        distractorRspT = 1.5
        itiT = 0.5

        """display relayed variables"""
        #init position/size related params
        leftImPos = [-0.2,0]
        rightImPos = [0.2,0]
        fixSize = np.array([0.12,0.12])#np.array([0.16,0.16])
        probeSize = [0.18,0.18]
        probePosVarX = 0.25
        probePosVarY = 0.12

        textSize = 0.03
        visualProbeSizeScalar = 1 #np.sqrt(2)

        #Cue colors
        cueColArr = [[0,128,0],[128,0,128]] #green,purple
        cueColDefault = [128,115,96]


        #
        clock = core.Clock()
        kb = keyboard.Keyboard()
  Routine Instructions
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    TextComponent instrTxt
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Try your best to remember to both images as you will be tested on one of them later on. Press space to start the experiment.

        Press "y" if the third image is a cropped part of the cued image. Press "n" if it is the cropped part of the uncued image. If you believe the 3rd image you see is not a cropped part of any of the images, press "w".
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Image_1
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    CodeComponent loadImage1
      Code Type = Py
      Before Experiment:
        from psychopy import visual, event, core
        import random
      Begin Routine:
        # Randomly select an image
        chosen_image = all_images[trlCnt]

        # Create an image object
        imageStim = visual.ImageStim(win, image=chosen_image, size = (0.25, 0.25))

        # Set the image path for the randomly chosen image
        imageStim.setImage(chosen_image.replace("\\", "/"))

        # Set the image to auto-draw
        imageStim.setAutoDraw(True)

        # Flip the window to display the image
        win.flip()
        core.wait(0.5)

        # Save the chosen image path to a variable
        saved_image_paths.append(chosen_image)
        #print(f"Trial {trial + 1}: Chosen image: {chosen_image}")
      End Routine:
        imageStim.setAutoDraw(False)
        win.flip()

        thisExp.addData('image1', saved_image_paths[-1])
  Routine trialRuns_WIP
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    CodeComponent trialRuns
      Code Type = Py
      Begin Routine:
        # Initialize a list to save chosen image paths
        #saved_image_paths = []

        # Run for 5 trials
        #for trial in range(5):
        #   # Randomly select an image
        #    trial_chosen_image = random.choice(images)
        #
        #    # Create an image object
        #    imageStim = visual.ImageStim(win)
        #
        #    # Set the image path for the randomly chosen image
        #    imageStim.setImage(chosen_image.replace("\\", "/"))

        #    # Flip the window to display the image
        #    win.flip()

            # Save the chosen image path to a list
        #    saved_image_paths.append(chosen_image)
        #    print(f"Trial {trial + 1}: Chosen image: {chosen_image}")
  Routine interstimulus_Interval
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    PolygonComponent polygon
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine Image_2
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    CodeComponent Image2
      Code Type = Py
      Begin Routine:
        #filtering out images that were previously seen
        avaliable_images = [img for img in all_images if img not in saved_image_paths]

        # Randomly select an image
        chosen_image = random.choice(avaliable_images)

        # Create an image object
        imageStim = visual.ImageStim(win, image = chosen_image, size = (0.25, 0.25))

        # Set the image path for the randomly chosen image
        imageStim.setImage(chosen_image.replace("\\", "/"))

        # Set the image to auto-draw
        imageStim.setAutoDraw(True)

        # Flip the window to display the image
        win.flip()
        core.wait(0.5)

        # Save the chosen image path to a variable
        saved_image_paths.append(chosen_image)
      End Routine:
        imageStim.setAutoDraw(False)
        win.flip()

        thisExp.addData('image2', saved_image_paths[-1])
  Routine delay
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    PolygonComponent delayCircle
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6.0
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  Routine endTrl
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    CodeComponent code
      Code Type = Py
      Begin Routine:
        trlCntTotal += 1
  Routine postTrialDelay
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    PolygonComponent polygon_2
      fillColor = 0.6078, -0.2784, -0.2784
      lineColor = 0.6078, -0.2784, -0.2784
      shape = triangle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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  Routine Cue
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    CodeComponent retrocueFixed
      Code Type = Py
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      Begin Routine:
        #randint(inclusive, exclusive)
        #saving it to a list for use in probe
        cue_select= []
        cue_selected = random.randint(0,1)
        cue_select.append(cue_selected)

        # if it's 1, on the screen, display "1". If 2, display "2"
        if cue_selected == 1:
            cue_text = "1"
            text_stim = visual.TextStim(win, text=cue_text,
                                        pos=(0.0, 0.0), color=(1.0, 1.0, 1.0),
                                        colorSpace='rgb', height=0.1,
                                        alignHoriz='center', alignVert='center')

        else:
            cue_text = "2"
            text_stim = visual.TextStim(win, text=cue_text,
                                        pos=(0.0, 0.0), color=(1.0, 1.0, 1.0),
                                        colorSpace='rgb', height=0.1,
                                        alignHoriz='center', alignVert='center')

        #creating cue_selected for later use in probe selection
        if cue_selected == 1:
            cue1_selected = saved_image_paths[-2]
            cue2_selected = "cue 1 was selected"
        else:
            cue2_selected = saved_image_paths[-1]
            cue1_selected = "cue 2 was selected"


        # Draw the stimulus on the window and flip
        text_stim.draw()
        win.flip()

        # Show the text for 1 seconds
        core.wait(1)
      End Routine:
        # Clean up
        imageStim.setAutoDraw(False)
        win.flip()


        thisExp.addData('cueType', cue_text)
  Routine Probe_Response
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    CodeComponent probeFixed
      Code Type = Py
      Begin Routine:
        '''
        Parameters
        - `cuedOrUncuded`: 0 + `sameImageOrNot`: 0 --> cropped part of **cued** image
        - `cuedOrUncuded`: 0 + `sameImageOrNot`: 1 --> cropped part of image from the same category of **cued** image (EXCLUDE cued image)
        - `cuedOrUncuded`: 1 + `sameImageOrNot`: 0 --> cropped part of **uncued** image
        - `cuedOrUncuded`: 1 + `sameImageOrNot`: 1 --> cropped part of image from the same category of **uncued** image (EXCLUDE uncued image)
        '''

        #setting up random generator
        cuedOrUncued = np.random.randint(0,2)
        sameImageOrNot = np.random.randint(0,2)

        # decide what kind probe this trial is. Refer to parameters above
        if cuedOrUncued == 0:
            probeType = 'cued'
            if sameImageOrNot == 0:
                probeType += 'Same'
            else:
                probeType += 'Diff'
        else:
            probeType = 'uncued'
            if sameImageOrNot == 0:
                probeType += 'Same'
            else:
                probeType += 'Diff'

        #saving to pathway
        probeTypePath += str("Trial:") + str(trlCnt) + " " + probeType + ","
        if isinstance(probeTypePath, str):
            probeTypePath = probeTypePath.split(",")

        #initializing empty list to be reused every loop
        empty = []

        #defining functions that specify how to select image based on the probeType.
        def split(firstSplit, secondSplit, probeType):
            if "Same" in probeType:
                if cue_select[-1] == 1:

                    #indexing out name of image
                    base_name = os.path.splitext(os.path.basename(firstSplit))[0]
                    for i in all_images:
                        #adding to list if basename is found in image paths
                        if base_name in os.path.basename(i):
                            empty.append(i)
                    if empty:
                        #creating image to be shown
                        image_file = random.choice(empty)
                        imageStim = visual.ImageStim(win, image=image_file, size = (0.25, 0.25))
                else:
                    base_name = os.path.splitext(os.path.basename(secondSplit))[0]
                    for i in all_images:
                        if base_name in os.path.basename(i):
                            empty.append(i)
                    if empty:
                        image_file = random.choice(empty)
                        imageStim = visual.ImageStim(win, image=image_file, size = (0.25, 0.25))
            else:
                if cue_select[-1] == 1:
                    base_name = os.path.splitext(os.path.basename(firstSplit))[0]
                    for i in all_images:
                        #creating a list of pathways that do not have the basename inside it
                        if base_name not in os.path.basename(i):
                            empty.append(i)
                    if empty:
                        #randomly choosing from the list
                        image_file = random.choice(empty)
                        imageStim = visual.ImageStim(win, image=image_file, size = (0.25, 0.25))
                else:
                    base_name = os.path.splitext(os.path.basename(secondSplit))[0]
                    for i in all_images:
                        if base_name not in os.path.basename(i):
                            empty.append(i)
                    if empty:
                        image_file = random.choice(empty)
                        imageStim = visual.ImageStim(win, image=image_file, size = (0.25, 0.25))

        #setting up image to chosen based on probeType
        if probeType == 'cuedSame':
            split(cue1_selected, cue2_selected, probeType)

        elif probeType == 'cuedDiff':
            split(cue1_selected, cue2_selected, probeType)

        elif probeType == "uncuedSame":
            split(cue2_selected, cue1_selected, probeType)

        elif probeType == "uncuedDiff":
            split(cue2_selected, cue1_selected, probeType)

        else:
            print("ruhoh")

        imageStim.setAutoDraw(True)
        win.flip()
      End Routine:
        #clean up
        imageStim.setAutoDraw(False)
        win.flip()
    CodeComponent letterClicked
      Code Type = Py
      Begin Routine:
        # Main loop for handling image display and key press
        mouse = event.Mouse(visible=True, win=win)

        while True:
            # Check for key presses
            keys = event.getKeys()
            if keys:
                key_pressed = keys[0]  # Get the first key pressed
                key_pressed = key_pressed if key_pressed in ('n', 'w', 'y') else None

            if key_pressed:
                # Log data
                thisExp.addData('letterClicked', key_pressed)
                break

            # Draw the image stimulus if it exists
            if 'imageStim' in locals():
                imageStim.draw()
                win.flip()
  Routine fixation
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    CodeComponent fixationCircle_inactive
      Code Type = Py
      Begin Routine:
        '''win = visual.Window(size=(800, 600), fullscr=False, color=(0, 0, 0), units='pix')

        fixCircMask = visual.ImageStim(win, image = fixCircPath, size = fixSize)
        fixCircMask.setImage(fixCircMask.replace("\\", "/"))

        fixCircMask.setAutoDraw(True)

        clock.reset()
        kb.clock.reset()
        kb.clearEvents()

        while clock.getTime() < 10:  # loop for 10 seconds
            win.flip()
        '''
    PolygonComponent cross
      fillColor = white
      shape = cross
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
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  Routine showStimuli
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    CodeComponent stimuliShown
      Code Type = Py
      Begin Routine:
        '''# Create the window
        win = visual.Window([800, 600], units="pix")

        # Setup your left and right images with adjusted positions
        leftImage = visual.ImageStim(win, pos=(-250, 0))  # Adjust position to leave some margin
        rightImage = visual.ImageStim(win, pos=(250, 0))  # Adjust position to leave some margin

        # Select images for this trial
        selected_images = random.sample(all_images, 2)
        leftImage.image = selected_images[0]
        rightImage.image = selected_images[1]

        # Load the first image and get its original size
        image = visual.ImageStim(win, image=selected_images[0])
        image_size = image.size  # Get the original size of the image
        aspect_ratio = image_size[0] / image_size[1]  # Aspect ratio (width / height)

        # Define the new size you want for the images (e.g., 350x350), but keep the aspect ratio
        new_width = 350  # Smaller width to leave a margin
        new_height = new_width / aspect_ratio  # Calculate the new height based on aspect ratio

        # Set the size of both images based on the aspect ratio
        leftImage.size = (new_width, new_height)
        rightImage.size = (new_width, new_height)

        # Set images to auto-draw
        leftImage.setAutoDraw(True)
        rightImage.setAutoDraw(True)
        # Now your fixation and images are all ready to display
        cueCircColor.setAutoDraw(True)
        fixCircMask.setAutoDraw(True)

        clock.reset()
        kb.clock.reset()
        kb.clearEvents()

        win.flip()  # flip once to show everything together

        # --- wait or collect responses here ---
        core.wait(2.0)  # e.g., wait for 1 second

        # --- Now turn off images, but KEEP fixation ---
        leftImage.setAutoDraw(False)
        rightImage.setAutoDraw(False)

        win.flip()  # flip to update (now only fixation will be on screen)

        core.wait(2.0)  # show just the fixation for 500 ms

        # --- Turn everything off before next trial ---
        cueCircColor.setAutoDraw(False)
        fixCircMask.setAutoDraw(False)

        # Flip to clear everything from the screen
        win.flip()
        '''
  Routine retrocue
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    CodeComponent drawRetrocue
      Code Type = Py
      Begin Routine:
        if df['cuedItem'][trlCntTotal] == 'left':
            thisOri = 180
        else:
            thisOri = 0

        retrocueMask.ori = thisOri

        cueCircColor.colorSpace='rgb255'
        cueCircColor.color = cueCorThis
        cueCircColor.setAutoDraw(True)
        retrocueMask.setAutoDraw(True) #draw retrocue


        clock.reset()
        kb.clock.reset()
        kb.clearEvents()

        win.flip()

        '''
        retrocueMask = visual.ImageStim(win, image=retrocuePath, size=fixSize)
        # Randomly set retrocue direction (left or right)
        retrocue_direction = random.choice([0, 180])  # 0 = right, 180 = left
        retrocueMask.ori = retrocue_direction


        cueCircColor.colorSpace = 'rgb255'
        cueCircColor.color = cueCorThis
        cueCircColor.setAutoDraw(True)
        retrocueMask.setAutoDraw(True)

        # Update window to draw the stimuli
        win.flip()

        # Wait to make sure the image stays on screen
        core.wait(1.0)

        # Turn off auto-drawing after display time
        retrocueMask.setAutoDraw(False)
        '''
      Each Frame:
        continuing = True
        while clock.getTime() <= retrocueT:
            key = kb.getKeys(['space', 'escape'], waitRelease=False)
            if 'escape' in key:
                  core.quit()
      End Routine:
        cueCircColor.setAutoDraw(False)
        retrocueMask.setAutoDraw(False)


        '''cueCircColor.setAutoDraw(False)
        fixCircMask.setAutoDraw(False)
        win.flip()

        clock.reset()
        kb.clock.reset()
        kb.clearEvents()


        trlCntTotal += 1'''
  Routine testingSession
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    CodeComponent mouseWheel
      Code Type = Py
      Begin Routine:
        polygon = visual.Polygon(win, edges=6, size=(0.5, 0.5), fillColor='blue', lineColor='white')

        while True:
            # Get scroll input
            wheel = event.mouseWheelRel[1]

            if wheel > 0:
                new_size = polygon.size[0] + 0.1
                polygon.size = (new_size, new_size)
            elif wheel < 0:
                new_size = max(0.1, polygon.size[0] - 0.1)
                polygon.size = (new_size, new_size)

            polygon.draw()
            win.flip()

            # Close if escape key pressed
            if 'escape' in event.getKeys():
                break

            core.wait(0.01)

        win.close()
        core.quit()
  Routine fixationCircle
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    CodeComponent fixationCir
      Code Type = Py
      Begin Routine:
        cueCircColor.setAutoDraw(True)
        fixCircMask.setAutoDraw(True)

        clock.reset()
        kb.clock.reset()
        kb.clearEvents()

        win.flip()
        '''fixCircMask = visual.ImageStim(win, image=fixCircPath, size=fixSize)

        cueCircColor.color = cueColDefault
        cueCircColor.setAutoDraw(True)
        fixCircMask.setAutoDraw(True)

        clock.reset()
        kb.clock.reset()
        kb.clearEvents()

        win.flip()

        core.wait(0.5)'''
      Each Frame:
        continuing = True
        while clock.getTime()<=fixationT:
            key = kb.getKeys(['space', 'escape'], waitRelease=False)
            if 'escape' in key:
                core.quit()
      End Routine:
        cueCircColor.setAutoDraw(False)
        fixCircMask.setAutoDraw(False)
        win.flip()
  Routine trlInit
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    CodeComponent initTrlParams
      Code Type = Py
      Begin Routine:
        """create trial id"""
        trlId = (expInfo['participant'],trlCntThisBlk,expBlk.thisN)

        """cue related params""" #CX modified this since I dont have a trlType col in df
        cueCircColor.fillColor = cueColDefault
        if df['cuedItem'][trlCntTotal] == 'left':
            cueCorThis = cueColArr[0] #green
        else:
            cueCorThis = cueColArr[0] #purple
      End Routine:
        thisExp.addData('TRIALID',trlId)
        for col,val in zip(df.iloc[trlCntTotal].index,df.iloc[trlCntTotal]):
            thisExp.addData(col,val)
  Routine blockInit
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    CodeComponent initBlockParams
      Code Type = Py
      Begin Experiment:
        trlCntThisBlk = 0
  Routine stim
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    CodeComponent drawVisualStim
      Code Type = Py
      Begin Routine:
        imLeft.setImage(df['leftImagePath'][trlCntTotal].replace(os.sep, "/"))
        imRight.setImage(df['rightImagePath'][trlCntTotal].replace(os.sep, "/"),)

        clock.reset()
        kb.clock.reset()
        kb.clearEvents()

        imLeft.setAutoDraw(True)
        imRight.setAutoDraw(True)




        win.flip()
      Each Frame:
        continuing = True
        while clock.getTime() <= stimT:
            pass
      End Routine:
        imLeft.setAutoDraw(False)
        imRight.setAutoDraw(False)

        #add other info
        thisExp.addData('stimT', stimT)
  Routine preCueRest
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    CodeComponent drawNoise
      Code Type = Py
      Begin Routine:
        noisePatchRight.setAutoDraw(True)
        noisePatchLeft.setAutoDraw(True)

        clock.reset()
        kb.clearEvents()

        win.flip()
      Each Frame:
        continuing = True
        while clock.getTime() <= noisePatchT:
            key = kb.getKeys(['escape'], waitRelease=False)
            if 'escape' in key:
                  core.quit()
        noisePatchRight.setAutoDraw(False)
        noisePatchLeft.setAutoDraw(False)
        win.flip()

        while clock.getTime() <= preCueRestT:
            pass
      End Routine:
        cueCircColor.setAutoDraw(False)
        fixCircMask.setAutoDraw(False)
  Routine delayCode_2
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    CodeComponent delayCode
      Code Type = Py
      Begin Routine:
        cueCircColor.color = cueColDefault

        cueCircColor.setAutoDraw(True)
        fixCircMask.setAutoDraw(True)
        noisePatchRight.setAutoDraw(False)
        noisePatchLeft.setAutoDraw(False)

        clock.reset()
        kb.clearEvents()

        win.flip()

        core.wait(2.0)
      End Routine:
        noisePatchRight.setAutoDraw(False)
        noisePatchLeft.setAutoDraw(False)
        cueCircColor.setAutoDraw(False)
        fixCircMask.setAutoDraw(False)

        win.flip()
  Routine probe
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  Routine ITI
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    CodeComponent code_2
      Code Type = Py
      Begin Routine:
        trlCntTotal +=1
        trlCntThisBlk +=1

        clock.reset()
        kb.clock.reset()
        kb.clearEvents()
      End Routine:
        clock.reset()
        kb.clock.reset()
        kb.clearEvents()
  Routine testingBlk
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    CodeComponent loadImage
      Code Type = Py
      Begin Routine:
        '''
        locationTracker.setAutoDraw(True)

        clock.reset()
        kb.clock.reset()
        kb.clearEvents()

        win.flip()
        '''
      End Routine:
        '''
        locationTracker.setAutoDraw(False)
        win.flip()
        '''
    CodeComponent drawMouse
      Code Type = Py
      Begin Experiment:
        probeMouse = event.Mouse(newPos = (0,0))
      Begin Routine:
        mouseIsDown = False

        #record continuous mouse activity
        probeMouse.x = []
        probeMouse.y = []
        probeMouse.leftButton = []
        probeMouse.midButton = []
        probeMouse.rightButton = []
        probeMouse.time = []
        probeMouse.clickOn = []

        #other mouse related variables
        eachClickTime = []
        eachClickItem = []

        clicksTotal = 0
        clickOnClickable = 0

        #prepare to draw
        locationTracker.setAutoDraw(True)

        #resets
        clock.reset()
        kb.clearEvents()
        probeMouse.clickReset(buttons=(0, 1, 2))
        event.clearEvents('mouse')
        probeMouse.mouseClock.reset()

        #set mouse starting position
        probeMouse.setPos((0,0))
        probeMouse.setVisible(1)

        win.flip()
      Each Frame:
        continueRoutine = True
        while continueRoutine:
            win.flip()
            x, y = probeMouse.getPos()
            probeMouse.x.append(x)
            probeMouse.y.append(y)
            buttons = probeMouse.getPressed()

            probeMouse.leftButton.append(buttons[0])
            probeMouse.midButton.append(buttons[1])
            probeMouse.rightButton.append(buttons[2])
            probeMouse.time.append(probeMouse.mouseClock.getTime())

            hoverOnClickable = locationTracker.contains(probeMouse)
            probeMouse.clickOn.append(hoverOnClickable)


            key = kb.getKeys(['escape'], waitRelease=False)
            if 'escape' in key:
                core.quit()
            #check for mouse press
            if sum(buttons) and mouseIsDown == False and hoverOnClickable:
                clickOnClickable = 1

                eachClickTime.append(probeMouse.mouseClock.getTime())
                eachClickItem.append(locationTracker.image)
                #mouse is pressing right now
                mouseIsDown = True
            #check for mouse release
            if sum(buttons) == 0 and mouseIsDown:
                #mouse released
                clicksTotal += clickOnClickable

                #change opacity
                clicking = locationTracker


                mouseIsDown = False
                continueRoutine  = False
      End Routine:
        #resets
        locationTracker.setAutoDraw(False)
        win.flip()
        kb.clearEvents()
        probeMouse.setVisible(0)

        try:
            #add mouse activity
            trials.addData('probeMouse.x', probeMouse.x)
            trials.addData('probeMouse.y', probeMouse.y)
            trials.addData('probeMouse.leftButton', probeMouse.leftButton)
            trials.addData('probeMouse.midButton', probeMouse.midButton)
            trials.addData('probeMouse.rightButton', probeMouse.rightButton)
            trials.addData('probeMouse.time', probeMouse.time)
            trials.addData('probeMouse.mouseOnProbes', probeMouse.clickOn)


            #record the final response
            thisExp.addData('rspIndex',clickOnClickable)
            thisExp.addData('rsp',clickableLabel[np.where(clickOnClickable == 1)[0]][0])
            thisExp.addData('rspPath',locationTracker[np.where(clickOnClickable == 1)[0]][0]._imName)

            #record RT
            thisExp.addData('rt',eachClickTime[0])
            thisExp.addData('timeEachClick', eachClickTime)
            thisExp.addData('itemEachClick', eachClickItem)
            thisExp.addData('missingRsp',False)
        except:
            thisExp.addData('missingRsp',True)
Flow
  Routine loadExpVar
  LoopInitiator expBlk loopType="TrialHandler"
    loopType = random
    nReps = blkTotal
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    Routine blockInit
    LoopInitiator trials loopType="TrialHandler"
      loopType = random
      nReps = trlEachBlk
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      Routine trlInit
      Routine fixationCircle
      Routine stim
      Routine preCueRest
      Routine retrocue
      Routine delayCode_2
      Routine testingBlk
      Routine ITI
    LoopTerminator trials
  LoopTerminator expBlk
