PsychoPy2experiment version="2024.2.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = psychedeLights_temp
  keyboardBackend = ioHub
  logging level = error
  runMode = 0
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Routines
  Routine fixationRest
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    CodeComponent drawFixation
      Code Type = Py
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      Begin Routine:
        cueCircColor.setAutoDraw(True)
        fixCircMask.setAutoDraw(True)

        clock.reset()
        kb.clock.reset()
        kb.clearEvents()

        win.flip()
      Each Frame:
        continuing = True
        while clock.getTime() <= fixationT:
            key = kb.getKeys(['space', 'escape'], waitRelease=False)
            if 'escape' in key:
                  core.quit()
    CodeComponent elRecord_fixation
      Code Type = Py
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      Begin Routine:
        this_epoch = 'fixation'
        aaa = core.monotonicClock.getTime
        thisExp.addData('fixationStart',str(aaa()))
        if eyetracking == 1:
            # get a reference to the currently active EyeLink connection
            el_tracker = pylink.getEYELINK()

            try:
                #start recording
                el_tracker.startRecording(1, 1, 1, 1)
                #send message to tracker to count trial number
                el_tracker.sendMessage('TRIALID %s' % str(trlId))
                el_tracker.sendMessage('fixationRest')
            except RuntimeError as error:
                print("ERROR:", error)
                abort_trial()
      End Routine:
        aaa = core.monotonicClock.getTime
        thisExp.addData('fixationEnd',str(aaa()))
  Routine stim
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    CodeComponent drawVisualStim
      Code Type = Py
      Begin Routine:
        imLeft.setImage(leftImagePath[trlCntTotal].replace(os.sep, "/"))
        imRight.setImage(rightImagePath[trlCntTotal].replace(os.sep, "/"),)

        clock.reset()
        kb.clock.reset()
        kb.clearEvents()

        imLeft.setAutoDraw(True)
        imRight.setAutoDraw(True)




        win.flip()
      Each Frame:
        continuing = True
        while clock.getTime() <= stimT:
            pass
      End Routine:
        imLeft.setAutoDraw(False)
        imRight.setAutoDraw(False)

        #add left image info
        thisExp.addData('imageLeft',imCat_left[trlCntTotal])
        thisExp.addData('imageSubCategoryLeft',imSubcat_left[trlCntTotal])
        thisExp.addData('imageNumLeft',imLabelNum_left[trlCntTotal])

        #add right image info
        thisExp.addData('imageRight',imCat_right[trlCntTotal])
        thisExp.addData('imageSubCategoryRight',imSubcat_right[trlCntTotal])
        thisExp.addData('imageNumRight',imLabelNum_right[trlCntTotal])

        #add other info
        thisExp.addData('stimT', stimT)
    CodeComponent elRecord_stim
      Code Type = Py
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      Begin Routine:
        this_epoch = 'stim'
        aaa = core.monotonicClock.getTime
        thisExp.addData(this_epoch+'Start',str(aaa()))

        if eyetracking == 1:
            el_tracker.sendMessage(this_epoch)
      End Routine:
        aaa = core.monotonicClock.getTime
        thisExp.addData(this_epoch+'End',str(aaa()))
  Routine loadExpVar
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    CodeComponent stimParams
      Code Type = Py
      Before Experiment:
        import numpy as np  # whole numpy lib is available, prepend 'np.'
        import pandas as pd
        import random
        import os  # handy system and path functions
        import sys  # to get file system encoding
        import glob

        import string
        import copy
        from collections import namedtuple, OrderedDict
        from psychopy.preferences import prefs
      Begin Experiment:
        # try to import pyglet & pygame
        '''
        try:
            from pygame import mouse, locals, joystick, display
            import pygame.key
            import pygame.event as evt
            havePygame = True
        except ImportError:
            havePygame = False
        try:
            import pyglet
            havePyglet = True
        except ImportError:
            havePyglet = False
        try:
            import glfw
            if not glfw.init():
                raise ImportError
            haveGLFW = True
        except ImportError:
            haveGLFW = False

        try:
            from collections.abc import MutableMapping
        except ImportError:
            from collections import MutableMapping

        if havePygame:
            usePygame = True  # will become false later if win not initialised
        else:
            usePygame = False

        if haveGLFW:
            useGLFW = True
        else:
            useGLFW = False

        import psychopy.core
        from psychopy.tools.monitorunittools import cm2pix, deg2pix, pix2cm, pix2deg
        from psychopy import logging
        from psychopy.constants import NOT_STARTED


        # global variable to keep track of mouse buttons
        mouseButtons = [0, 0, 0]


        if havePyglet or haveGLFW:
            # importing from mouse takes ~250ms, so do it now
            if havePyglet:
                from pyglet.window.mouse import LEFT, MIDDLE, RIGHT
                from pyglet.window.key import (
                    MOD_SHIFT,
                    MOD_CTRL,
                    MOD_ALT,
                    MOD_CAPSLOCK,
                    MOD_NUMLOCK,
                    MOD_WINDOWS,
                    MOD_COMMAND,
                    MOD_OPTION,
                    MOD_SCROLLLOCK
                )

            _keyBuffer = []
            mouseWheelRel = numpy.array([0.0, 0.0])
            # list of 3 clocks that are reset on mouse button presses
            mouseClick = [psychopy.core.Clock(), psychopy.core.Clock(),
                          psychopy.core.Clock()]
            # container for time elapsed from last reset of mouseClick[n] for any
            # button pressed
            mouseTimes = [0.0, 0.0, 0.0]
            # clock for tracking time of mouse movement, reset when mouse is moved,
            # reset on mouse motion:
            mouseMove = psychopy.core.Clock()
            # global eventThread
            # eventThread = _EventDispatchThread()
            # eventThread.start()
            if haveGLFW:
                # GLFW keycodes for special characters
                _glfw_keycodes_ = {
                    glfw.KEY_SPACE: 'space',
                    glfw.KEY_ESCAPE: 'esc',
                    glfw.KEY_ENTER: 'return',
                    glfw.KEY_TAB: 'tab',
                    glfw.KEY_BACKSPACE: 'backspace',
                    glfw.KEY_INSERT: 'insert',
                    glfw.KEY_DELETE: 'delete',
                    glfw.KEY_RIGHT: 'right',
                    glfw.KEY_LEFT: 'left',
                    glfw.KEY_DOWN: 'down',
                    glfw.KEY_UP: 'up',
                    glfw.KEY_PAGE_UP: 'pageup',
                    glfw.KEY_PAGE_DOWN: 'pagedn',
                    glfw.KEY_HOME: 'home',
                    glfw.KEY_END: 'end',
                    glfw.KEY_CAPS_LOCK: 'capslock',
                    glfw.KEY_SCROLL_LOCK: 'scrolllock',
                    glfw.KEY_NUM_LOCK: 'numlock',
                    glfw.KEY_PRINT_SCREEN: 'printscreen',
                    glfw.KEY_PAUSE: 'pause',
                    glfw.KEY_F1: 'f1',
                    glfw.KEY_F2: 'f2',
                    glfw.KEY_F3: 'f3',
                    glfw.KEY_F4: 'f4',
                    glfw.KEY_F5: 'f5',
                    glfw.KEY_F6: 'f6',
                    glfw.KEY_F7: 'f7',
                    glfw.KEY_F8: 'f8',
                    glfw.KEY_F9: 'f9',
                    glfw.KEY_F10: 'f10',
                    glfw.KEY_F11: 'f11',
                    glfw.KEY_F12: 'f12',
                    glfw.KEY_F13: 'f13',
                    glfw.KEY_F14: 'f14',
                    glfw.KEY_F15: 'f15',
                    glfw.KEY_F16: 'f16',
                    glfw.KEY_F17: 'f17',
                    glfw.KEY_F18: 'f18',
                    glfw.KEY_F19: 'f19',
                    glfw.KEY_F20: 'f20',
                    glfw.KEY_F21: 'f21',
                    glfw.KEY_F22: 'f22',
                    glfw.KEY_F23: 'f23',
                    glfw.KEY_F24: 'f24',
                    glfw.KEY_F25: 'f25',
                }

        useText = False  # By default _onPygletText is not used


        def _onPygletText(text, emulated=False):
            """handler for on_text pyglet events, or call directly to emulate a text
            event.

            S Mathot 2012: This function only acts when the key that is pressed
            corresponds to a non-ASCII text character (Greek, Arabic, Hebrew, etc.).
            In that case the symbol that is passed to _onPygletKey() is translated
            into a useless 'user_key()' string. If this happens, _onPygletText takes
            over the role of capturing the key. Unfortunately, _onPygletText()
            cannot solely handle all input, because it does not respond to spacebar
            presses, etc.
            """

            global useText
            if not useText:  # _onPygletKey has handled the input
                return
            # This is needed because sometimes the execution
            # sequence is messed up (somehow)
            useText = False
            # capture when the key was pressed:
            keyTime = psychopy.core.getTime()
            if emulated:
                keySource = 'EmulatedKey'
            else:
                keySource = 'KeyPress'
            _keyBuffer.append((text.lower(), lastModifiers, keyTime))
            logging.data("%s: %s" % (keySource, text))


        def _onPygletKey(symbol, modifiers, emulated=False):
            """handler for on_key_press pyglet events; call directly to emulate a
            key press

            Appends a tuple with (keyname, timepressed) into the global _keyBuffer.
            The _keyBuffer can then be accessed as normal using event.getKeys(),
            .waitKeys(), clearBuffer(), etc.

            J Gray 2012: Emulated means add a key (symbol) to the buffer virtually.
            This is useful for fMRI_launchScan, and for unit testing (in testTheApp)
            Logging distinguishes EmulatedKey events from real Keypress events.
            For emulation, the key added to the buffer is unicode(symbol), instead of
            pyglet.window.key.symbol_string(symbol).

            S Mathot 2012: Implement fallback to _onPygletText

            5AM Solutions 2016: Add the keyboard modifier flags to the key buffer.

            M Cutone 2018: Added GLFW backend support.

            """
            global useText, lastModifiers

            keyTime = psychopy.core.getTime()  # capture when the key was pressed
            if emulated:
                if not isinstance(modifiers, int):
                    msg = 'Modifiers must be passed as an integer value.'
                    raise ValueError(msg)

                thisKey = str(symbol)
                keySource = 'EmulatedKey'
            else:
                thisKey = pyglet.window.key.symbol_string(
                    symbol).lower()  # convert symbol into key string
                # convert pyglet symbols to pygame forms ( '_1'='1', 'NUM_1'='[1]')
                # 'user_key' indicates that Pyglet has been unable to make sense
                # out of the keypress. In that case, we fall back to _onPygletText
                # to handle the input.
                if 'user_key' in thisKey:
                    useText = True
                    lastModifiers = modifiers
                    return
                useText = False
                thisKey = thisKey.lstrip('_').lstrip('NUM_')
                # Pyglet 1.3.0 returns 'enter' when Return key (0xFF0D) is pressed
                # in Windows Python3. So we have to replace 'enter' with 'return'.
                if thisKey == 'enter':
                    thisKey = 'return'
                keySource = 'Keypress'
            _keyBuffer.append((thisKey, modifiers, keyTime))  # tuple
            logging.data("%s: %s" % (keySource, thisKey))
            _process_global_event_key(thisKey, modifiers)


        def _process_global_event_key(key, modifiers):
            if modifiers == 0:
                modifier_keys = ()
            else:
                modifier_keys = ['%s' % m.strip('MOD_').lower() for m in
                                 (pyglet.window.key.modifiers_string(modifiers)
                                  .split('|'))]

                # Ignore Num Lock.
                if 'numlock' in modifier_keys:
                    modifier_keys.remove('numlock')

            index_key = globalKeys._gen_index_key((key, modifier_keys))

            if index_key in globalKeys:
                event = globalKeys[index_key]
                logging.exp('Global key event: %s. Calling %s.'
                            % (event.name, event.func))
                r = event.func(*event.func_args, **event.func_kwargs)
                return r


        def _onPygletMousePress(x, y, button, modifiers, emulated=False):
            """button left=1, middle=2, right=4;
            specify multiple buttons with | operator
            """
            global mouseButtons, mouseClick, mouseTimes
            now = psychopy.clock.getTime()
            if emulated:
                label = 'Emulated'
            else:
                label = ''
            if button & LEFT:
                mouseButtons[0] = 1
                mouseTimes[0] = now - mouseClick[0].getLastResetTime()
                label += ' Left'
            if button & MIDDLE:
                mouseButtons[1] = 1
                mouseTimes[1] = now - mouseClick[1].getLastResetTime()
                label += ' Middle'
            if button & RIGHT:
                mouseButtons[2] = 1
                mouseTimes[2] = now - mouseClick[2].getLastResetTime()
                label += ' Right'
            logging.data("Mouse: %s button down, pos=(%i,%i)" % (label.strip(), x, y))


        def _onPygletMouseRelease(x, y, button, modifiers, emulated=False):
            global mouseButtons
            if emulated:
                label = 'Emulated'
            else:
                label = ''
            if button & LEFT:
                mouseButtons[0] = 0
                label += ' Left'
            if button & MIDDLE:
                mouseButtons[1] = 0
                label += ' Middle'
            if button & RIGHT:
                mouseButtons[2] = 0
                label += ' Right'
            logging.data("Mouse: %s button up, pos=(%i,%i)" % (label, x, y))


        def _onPygletMouseWheel(x, y, scroll_x, scroll_y):
            global mouseWheelRel
            mouseWheelRel = mouseWheelRel + numpy.array([scroll_x, scroll_y])
            msg = "Mouse: wheel shift=(%i,%i), pos=(%i,%i)"
            logging.data(msg % (scroll_x, scroll_y, x, y))


        # will this work? how are pyglet event handlers defined?
        def _onPygletMouseMotion(x, y, dx, dy):
            global mouseMove
            # mouseMove is a core.Clock() that is reset when the mouse moves
            # default is None, but start and stopMoveClock() create and remove it,
            # mouseMove.reset() resets it by hand
            if mouseMove:
                mouseMove.reset()


        def startMoveClock():
            global mouseMove
            mouseMove = psychopy.core.Clock()


        def stopMoveClock():
            global mouseMove
            mouseMove = None


        def resetMoveClock():
            global mouseMove
            if mouseMove:
                mouseMove.reset()
            else:
                startMoveClock()

        # class Keyboard:
        #    """The keyboard class is currently just a helper class to allow common
        #    attributes with other objects (like mouse and stimuli). In particular
        #    it allows storage of the .status property (NOT_STARTED, STARTED, STOPPED).

        #    It isn't really needed for most users - the functions it supports (e.g.
        #    getKeys()) are directly callable from the event module.

        #    Note that multiple Keyboard instances will not keep separate buffers.

        #    """
        #    def __init__(self):
        #        self.status=NOT_STARTED
        #    def getKeys(keyList=None, timeStamped=False):
        #        return getKeys(keyList=keyList, timeStamped=timeStamped)
        #    def waitKeys(maxWait = None, keyList=None):
        #        return def waitKeys(maxWait = maxWait, keyList=keyList)


        def modifiers_dict(modifiers):
            """Return dict where the key is a keyboard modifier flag
            and the value is the boolean state of that flag.

            """
            return {(mod[4:].lower()): modifiers & getattr(sys.modules[__name__], mod) > 0 for mod in [
                'MOD_SHIFT',
                'MOD_CTRL',
                'MOD_ALT',
                'MOD_CAPSLOCK',
                'MOD_NUMLOCK',
                'MOD_WINDOWS',
                'MOD_COMMAND',
                'MOD_OPTION',
                'MOD_SCROLLLOCK'
            ]}

        [docs]def getKeys(keyList=None, modifiers=False, timeStamped=False):
            """Returns a list of keys that were pressed.

            :Parameters:
                keyList : **None** or []
                    Allows the user to specify a set of keys to check for.
                    Only keypresses from this set of keys will be removed from
                    the keyboard buffer. If the keyList is `None`, all keys will be
                    checked and the key buffer will be cleared completely.
                    NB, pygame doesn't return timestamps (they are always 0)
                modifiers : **False** or True
                    If True will return a list of tuples instead of a list of
                    keynames. Each tuple has (keyname, modifiers). The modifiers
                    are a dict of keyboard modifier flags keyed by the modifier
                    name (eg. 'shift', 'ctrl').
                timeStamped : **False**, True, or `Clock`
                    If True will return a list of tuples instead of a list of
                    keynames. Each tuple has (keyname, time). If a `core.Clock`
                    is given then the time will be relative to the `Clock`'s last
                    reset.

            :Author:
                - 2003 written by Jon Peirce
                - 2009 keyList functionality added by Gary Strangman
                - 2009 timeStamped code provided by Dave Britton
                - 2016 modifiers code provided by 5AM Solutions
            """
            keys = []

            if havePygame and display.get_init():
                # see if pygame has anything instead (if it exists)
                windowSystem = 'pygame'
                for evts in evt.get(locals.KEYDOWN):
                    # pygame has no keytimes
                    keys.append((pygame.key.name(evts.key), 0))

            global _keyBuffer

            if havePyglet:
                # for each (pyglet) window, dispatch its events before checking event
                # buffer
                windowSystem = 'pyglet'
                for win in pyglet.app.windows:
                    try:
                        win.dispatch_events()  # pump events on pyglet windows
                    except ValueError as e:  # pragma: no cover
                        # Pressing special keys, such as 'volume-up', results in a
                        # ValueError. This appears to be a bug in pyglet, and may be
                        # specific to certain systems and versions of Python.
                        logging.error(u'Failed to handle keypress')

                if len(_keyBuffer) > 0:
                    # then pyglet is running - just use this
                    keys = _keyBuffer
                    # _keyBuffer = []  # DO /NOT/ CLEAR THE KEY BUFFER ENTIRELY

            if haveGLFW:
                windowSystem = 'glfw'
                glfw.poll_events()
                if len(_keyBuffer) > 0:
                    keys = _keyBuffer

            if keyList is None:
                _keyBuffer = []  # clear buffer entirely
                targets = keys  # equivalent behavior to getKeys()
            else:
                nontargets = []
                targets = []
                # split keys into keepers and pass-thrus
                for key in keys:
                    if key[0] in keyList:
                        targets.append(key)
                    else:
                        nontargets.append(key)
                _keyBuffer = nontargets  # save these

            # now we have a list of tuples called targets
            # did the user want timestamped tuples or keynames?
            if modifiers == False and timeStamped == False:
                keyNames = [k[0] for k in targets]
                return keyNames
            elif timeStamped == False:
                keyNames = [(k[0], modifiers_dict(k[1])) for k in targets]
                return keyNames
            elif timeStamped and windowSystem=='pygame':
                # provide a warning and set timestamps to be None
                logging.warning('Pygame keyboard events do not support timestamped=True')
                relTuple = [[_f for _f in (k[0], modifiers and modifiers_dict(k[1]) or None, None) if _f] for k in targets]
                return relTuple
            elif hasattr(timeStamped, 'getLastResetTime'):
                # keys were originally time-stamped with
                #   core.monotonicClock._lastResetTime
                # we need to shift that by the difference between it and
                # our custom clock
                _last = timeStamped.getLastResetTime()
                _clockLast = psychopy.core.monotonicClock.getLastResetTime()
                timeBaseDiff = _last - _clockLast
                relTuple = [[_f for _f in (k[0], modifiers and modifiers_dict(k[1]) or None, k[-1] - timeBaseDiff) if _f] for k in targets]
                return relTuple
            elif timeStamped is True:
                return [[_f for _f in (k[0], modifiers and modifiers_dict(k[1]) or None, k[-1]) if _f] for k in targets]
            elif isinstance(timeStamped, (float, int, int)):
                relTuple = [[_f for _f in (k[0], modifiers and modifiers_dict(k[1]) or None, k[-1] - timeStamped) if _f] for k in targets]
                return relTuple
            else: ## danger - catch anything that gets here because it shouldn't!
                raise ValueError("We received an unknown combination of params to "
                                 "getKeys(): timestamped={}, windowSystem={}, "
                                 "modifiers={}"
                                .format(timeStamped, windowSystem, modifiers))


        [docs]def waitKeys(maxWait=float('inf'), keyList=None, modifiers=False,
                     timeStamped=False, clearEvents=True):
            """Same as `~psychopy.event.getKeys`, but halts everything
            (including drawing) while awaiting input from keyboard.

            :Parameters:
                maxWait : any numeric value.
                    Maximum number of seconds period and which keys to wait for.
                    Default is float('inf') which simply waits forever.
                keyList : **None** or []
                    Allows the user to specify a set of keys to check for.
                    Only keypresses from this set of keys will be removed from
                    the keyboard buffer. If the keyList is `None`, all keys will be
                    checked and the key buffer will be cleared completely.
                    NB, pygame doesn't return timestamps (they are always 0)
                modifiers : **False** or True
                    If True will return a list of tuples instead of a list of
                    keynames. Each tuple has (keyname, modifiers). The modifiers
                    are a dict of keyboard modifier flags keyed by the modifier
                    name (eg. 'shift', 'ctrl').
                timeStamped : **False**, True, or `Clock`
                    If True will return a list of tuples instead of a list of
                    keynames. Each tuple has (keyname, time). If a `core.Clock`
                    is given then the time will be relative to the `Clock`'s last
                    reset.
                clearEvents : **True** or False
                    Whether to clear the keyboard event buffer (and discard preceding
                    keypresses) before starting to monitor for new keypresses.

            Returns None if times out.

            """
            if clearEvents:
                # Only consider keypresses from here onwards.
                # We need to invoke clearEvents(), but our keyword argument is
                # also called clearEvents. We can work around this conflict by
                # accessing the global scope explicitly.
                globals()['clearEvents']('keyboard')

            # Check for keypresses until maxWait is exceeded
            #
            # NB pygame.event does have a wait() function that will
            # do this and maybe leave more cpu idle time?

            timer = psychopy.core.Clock()
            got_keypress = False

            while not got_keypress and timer.getTime() < maxWait:
                # Get keypresses and return if anything is pressed.
                keys = getKeys(keyList=keyList, modifiers=modifiers,
                               timeStamped=timeStamped)
                if keys:
                    got_keypress = True

            if got_keypress:
                return keys
            else:
                logging.data('No keypress (maxWait exceeded)')
                return None


        [docs]def xydist(p1=(0.0, 0.0), p2=(0.0, 0.0)):
            """Helper function returning the cartesian distance between p1 and p2
            """
            return numpy.sqrt(pow(p1[0] - p2[0], 2) + pow(p1[1] - p2[1], 2))


        [docs]class Mouse:
            """Easy way to track what your mouse is doing.

            It needn't be a class, but since Joystick works better
            as a class this may as well be one too for consistency

            Create your `visual.Window` before creating a Mouse.

            :Parameters:
                visible : bool or None
                    Show the mouse if True, hide it if False, leave it as is if None (default)
                newPos : **None** or [x,y]
                    gives the mouse a particular starting position
                    (pygame `Window` only)
                win : **None** or `Window`
                    the window to which this mouse is attached
                    (the first found if None provided)
            """

            def __init__(self,
                         visible=None,
                         newPos=None,
                         win=None):
                super(Mouse, self).__init__()
                self._visible = visible
                self.lastPos = None
                self.prevPos = None  # used for motion detection and timing
                if win:
                    self.win = win
                else:
                    try:
                        # to avoid circular imports, core.openWindows is defined
                        # by visual.py and updated in core namespace;
                        # it's circular to "import visual" here in event
                        self.win = psychopy.core.openWindows[0]()
                        logging.info('Mouse: using default window')
                    except (NameError, IndexError):
                        logging.error('Mouse: failed to get a default visual.Window'
                                      ' (need to create one first)')
                        self.win = None

                # get the scaling factors for the display
                if self.win is not None:
                    self._winScaleFactor = self.win.getContentScaleFactor()
                else:
                    self._winScaleFactor = 1.0

                # for builder: set status to STARTED, NOT_STARTED etc
                self.status = None
                self.mouseClock = psychopy.core.Clock()
                self.movedistance = 0.0
                # if pygame isn't initialised then we must use pyglet
                global usePygame
                if havePygame and not pygame.display.get_init():
                    usePygame = False
                if visible is not None:
                    self.setVisible(visible)
                if newPos is not None:
                    self.setPos(newPos)

            @property
            def units(self):
                """The units for this mouse
                (will match the current units for the Window it lives in)
                """
                return self.win.units

        [docs]    def setPos(self, newPos=(0, 0)):
                """Sets the current position of the mouse,
                in the same units as the :class:`~visual.Window`. (0,0) is the center.

                :Parameters:
                    newPos : (x,y) or [x,y]
                        the new position on the screen
                """
                newPosPix = self._windowUnits2pix(numpy.array(newPos))
                if usePygame:
                    newPosPix[1] = self.win.size[1] / 2 - newPosPix[1]
                    newPosPix[0] = self.win.size[0] / 2 + newPosPix[0]
                    mouse.set_pos(newPosPix)
                else:
                    if hasattr(self.win.winHandle, 'set_mouse_position'):
                        if self.win.useRetina:
                            newPosPix = numpy.array(self.win.size) / 4 + newPosPix / 2
                        else:
                            wsf = self._winScaleFactor
                            newPosPix = \
                                numpy.array(self.win.size) / (2 * wsf) + newPosPix / wsf
                        x, y = int(newPosPix[0]), int(newPosPix[1])
                        self.win.winHandle.set_mouse_position(x, y)
                        self.win.winHandle._mouse_x = x
                        self.win.winHandle._mouse_y = y
                    else:
                        msg = 'mouse position could not be set (pyglet %s)'
                        logging.error(msg % pyglet.version)

        [docs]    def getPos(self):
                """Returns the current position of the mouse,
                in the same units as the :class:`~visual.Window` (0,0) is at centre
                """
                lastPosPix = numpy.zeros((2,), dtype=numpy.float32)
                if usePygame:  # for pygame top left is 0,0
                    lastPosPix = numpy.array(mouse.get_pos())
                    # set (0,0) to centre
                    lastPosPix[1] = self.win.size[1] / 2 - lastPosPix[1]
                    lastPosPix[0] = lastPosPix[0] - self.win.size[0] / 2
                    self.lastPos = self._pix2windowUnits(lastPosPix)
                elif useGLFW and self.win.winType=='glfw':
                    lastPosPix[:] = self.win.backend.getMousePos()
                    if self.win.useRetina:
                        lastPosPix *= 2.0
                else:  # for pyglet bottom left is 0,0
                    # use default window if we don't have one
                    if self.win:
                        w = self.win.winHandle
                    else:

                        if psychopy.core.openWindows:
                            w = psychopy.core.openWindows[0]()
                        else:
                            logging.warning("Called event.Mouse.getPos() for the mouse with no Window being opened")
                            return None

                    # get position in window
                    lastPosPix[:] = w._mouse_x, w._mouse_y

                    # set (0,0) to centre
                    if self.win.useRetina:
                        lastPosPix = lastPosPix * 2 - numpy.array(self.win.size) / 2
                    else:
                        wsf = self._winScaleFactor
                        lastPosPix = lastPosPix * wsf - numpy.array(self.win.size) / 2

                self.lastPos = self._pix2windowUnits(lastPosPix)

                return copy.copy(self.lastPos)

        [docs]    def mouseMoved(self, distance=None, reset=False):
                """Determine whether/how far the mouse has moved.

                With no args returns true if mouse has moved at all since last
                getPos() call, or distance (x,y) can be set to pos or neg
                distances from x and y to see if moved either x or y that
                far from lastPos, or distance can be an int/float to test if
                new coordinates are more than that far in a straight line
                from old coords.

                Retrieve time of last movement from self.mouseClock.getTime().

                Reset can be to 'here' or to screen coords (x,y) which allows
                measuring distance from there to mouse when moved. If reset is
                (x,y) and distance is set, then prevPos is set to (x,y) and
                distance from (x,y) to here is checked, mouse.lastPos is set as
                current (x,y) by getPos(), mouse.prevPos holds lastPos from
                last time mouseMoved was called.
                """
                # mouseMove = clock that gets reset by pyglet mouse movement handler:
                global mouseMove
                # needs initialization before getPos resets lastPos
                self.prevPos = copy.copy(self.lastPos)
                self.getPos()  # sets self.lastPos to current position
                if not reset:
                    if distance is None:
                        if self.prevPos[0] != self.lastPos[0]:
                            return True
                        if self.prevPos[1] != self.lastPos[1]:
                            return True
                    else:
                        if isinstance(distance, int) or isinstance(distance, float):
                            self.movedistance = xydist(self.prevPos, self.lastPos)
                            if self.movedistance > distance:
                                return True
                            else:
                                return False
                        if self.prevPos[0] + distance[0] - self.lastPos[0] > 0.0:
                            return True  # moved on X-axis
                        if self.prevPos[1] + distance[1] - self.lastPos[0] > 0.0:
                            return True  # moved on Y-axis
                    return False
                if reset is True:
                    # just reset the last move time: starts/zeroes the move clock
                    mouseMove.reset()  # resets the global mouseMove clock
                    return False
                if reset == 'here':
                    # set to wherever we are
                    self.prevPos = copy.copy(self.lastPos)  # lastPos set in getPos()
                    return False
                if hasattr(reset, '__len__'):
                    # a tuple or list of (x,y)
                    # reset to (x,y) to check movement from there
                    self.prevPos = copy.copy(reset)
                    if not distance:
                        return False  # just resetting prevPos, not checking distance
                    else:
                        # checking distance of current pos to newly reset prevposition
                        if isinstance(distance, int) or isinstance(distance, float):
                            self.movedistance = xydist(self.prevPos, self.lastPos)
                            if self.movedistance > distance:
                                return True
                            else:
                                return False
                        # distance is x,y tuple, to check if the mouse moved that
                        # far on either x or y axis
                        # distance must be (dx,dy), and reset is (rx,ry), current pos
                        # (cx,cy): Is cx-rx > dx ?
                        if abs(self.lastPos[0] - self.prevPos[0]) > distance[0]:
                            return True  # moved on X-axis
                        if abs(self.lastPos[1] - self.prevPos[1]) > distance[1]:
                            return True  # moved on Y-axis
                    return False
                return False

        [docs]    def mouseMoveTime(self):
                global mouseMove
                if mouseMove:
                    return mouseMove.getTime()
                else:
                    return 0  # mouseMove clock not started

        [docs]    def getRel(self):
                """Returns the new position of the mouse relative to the
                last call to getRel or getPos, in the same units as the
                :class:`~visual.Window`.
                """
                if usePygame:
                    relPosPix = numpy.array(mouse.get_rel()) * [1, -1]
                    return self._pix2windowUnits(relPosPix)
                else:
                    # NB getPost() resets lastPos so MUST retrieve lastPos first
                    if self.lastPos is None:
                        relPos = self.getPos()
                    else:
                        # DON't switch to (this-lastPos)
                        relPos = -self.lastPos + self.getPos()
                    return relPos

        [docs]    def getWheelRel(self):
                """Returns the travel of the mouse scroll wheel since last call.
                Returns a numpy.array(x,y) but for most wheels y is the only
                value that will change (except Mac mighty mice?)
                """
                global mouseWheelRel
                rel = mouseWheelRel
                mouseWheelRel = numpy.array([0.0, 0.0])
                return rel

            @property
            def visible(self):
                """Gets the visibility of the mouse (1 or 0)
                """
                if usePygame:
                    return mouse.get_visible()
                else:
                    print("Getting the mouse visibility is not supported under"
                          " pyglet, but you can set it anyway")

            @visible.setter
            def visible(self, visible):
                """Sets the visibility of the mouse to 1 or 0

                NB when the mouse is not visible its absolute position is held
                at (0, 0) to prevent it from going off the screen and getting lost!
                You can still use getRel() in that case.
                """
                self.setVisible(visible)

        [docs]    def getVisible(self):
                """Gets the visibility of the mouse (1 or 0)
                """
                if usePygame:
                    return mouse.get_visible()

                return self._visible

        [docs]    def setVisible(self, visible):
                """Sets the visibility of the mouse to 1 or 0

                NB when the mouse is not visible its absolute position is held
                at (0, 0) to prevent it from going off the screen and getting lost!
                You can still use getRel() in that case.
                """
                if self.win:  # use default window if we don't have one
                    self.win.setMouseVisible(visible)
                elif usePygame:
                    mouse.set_visible(visible)
                else:
                    from psychopy.visual import openWindows
                    if openWindows:
                        w = openWindows[0]()  # type: psychopy.visual.Window
                    else:
                        logging.warning(
                            "Called event.Mouse.getPos() for the mouse with no Window "
                            "being opened")
                        return None
                    w.setMouseVisible(visible)

                self._visible = visible  # set internal state

        [docs]    def clickReset(self, buttons=(0, 1, 2)):
                """Reset a 3-item list of core.Clocks use in timing button clicks.

                The pyglet mouse-button-pressed handler uses their
                clock.getLastResetTime() when a button is pressed so the user
                can reset them at stimulus onset or offset to measure RT. The
                default is to reset all, but they can be reset individually as
                specified in buttons list
                """
                global mouseClick
                for c in buttons:
                    mouseClick[c].reset()
                    mouseTimes[c] = 0.0

        [docs]    def getPressed(self, getTime=False):
                """Returns a 3-item list indicating whether or not buttons 0,1,2
                are currently pressed.

                If `getTime=True` (False by default) then `getPressed` will
                return all buttons that have been pressed since the last call
                to `mouse.clickReset` as well as their time stamps::

                    buttons = mouse.getPressed()
                    buttons, times = mouse.getPressed(getTime=True)

                Typically you want to call :ref:`mouse.clickReset()` at stimulus
                onset, then after the button is pressed in reaction to it, the
                total time elapsed from the last reset to click is in mouseTimes.
                This is the actual RT, regardless of when the call to `getPressed()`
                was made.

                """
                global mouseButtons, mouseTimes
                if usePygame:
                    return mouse.get_pressed()
                else:
                    # for each (pyglet) window, dispatch its events before checking
                    # event buffer
                    if havePyglet:
                        for win in pyglet.app.windows:
                            win.dispatch_events()  # pump events on pyglet windows

                    if haveGLFW:
                        glfw.poll_events()

                    # else:
                    if not getTime:
                        return copy.copy(mouseButtons)
                    else:
                        return copy.copy(mouseButtons), copy.copy(mouseTimes)

        [docs]    def isPressedIn(self, shape, buttons=(0, 1, 2)):
                """Returns `True` if the mouse is currently inside the shape and
                one of the mouse buttons is pressed. The default is that any of
                the 3 buttons can indicate a click; for only a left-click,
                specify `buttons=[0]`::

                    if mouse.isPressedIn(shape):
                    if mouse.isPressedIn(shape, buttons=[0]):  # left-clicks only

                Ideally, `shape` can be anything that has a `.contains()` method,
                like `ShapeStim` or `Polygon`. Not tested with `ImageStim`.
                """
                wanted = numpy.zeros(3, dtype=int)
                for c in buttons:
                    wanted[c] = 1
                pressed = self.getPressed()
                return any(wanted & pressed) and shape.contains(self)

            def _pix2windowUnits(self, pos):
                if self.win.units == 'pix':
                    if self.win.useRetina:
                        pos /= 2.0
                    return pos
                elif self.win.units == 'norm':
                    return pos * 2.0 / self.win.size
                elif self.win.units == 'cm':
                    return pix2cm(pos, self.win.monitor)
                elif self.win.units == 'deg':
                    return pix2deg(pos, self.win.monitor)
                elif self.win.units == 'height':
                    return pos / float(self.win.size[1])

            def _windowUnits2pix(self, pos):
                if self.win.units == 'pix':
                    return pos
                elif self.win.units == 'norm':
                    return pos * self.win.size / 2.0
                elif self.win.units == 'cm':
                    return cm2pix(pos, self.win.monitor)
                elif self.win.units == 'deg':
                    return deg2pix(pos, self.win.monitor)
                elif self.win.units == 'height':
                    return pos * float(self.win.size[1])

        [docs]    def setExclusive(self, exclusivity):
                """Binds the mouse to the experiment window. Only works in Pyglet.

                In multi-monitor settings, or with a window that is not fullscreen,
                the mouse pointer can drift, and thereby PsychoPy might not get the
                events from that window. setExclusive(True) works with Pyglet to
                bind the mouse to the experiment window.

                Note that binding the mouse pointer to a window will cause the
                pointer to vanish, and absolute positions will no longer be
                meaningful getPos() returns [0, 0] in this case.
                """
                if type(exclusivity) is not bool:
                    raise ValueError('Exclusivity must be a boolean!')
                if not usePygame:
                    msg = ('Setting mouse exclusivity in Pyglet will cause the '
                           'cursor to disappear, and getPos() will be rendered '
                           'meaningless, returning [0, 0]')
                    psychopy.logging.warning(msg)
                    self.win.winHandle.set_exclusive_mouse(exclusivity)
                else:
                    print('Mouse exclusivity can only be set for Pyglet!')


        class BuilderKeyResponse():
            """Used in scripts created by the builder to keep track of a clock and
            the current status (whether or not we are currently checking the keyboard)
            """

            def __init__(self):
                super(BuilderKeyResponse, self).__init__()
                self.status = NOT_STARTED
                self.keys = []  # the key(s) pressed
                self.corr = 0  # was the resp correct this trial? (0=no, 1=yes)
                self.rt = []  # response time(s)
                self.clock = psychopy.core.Clock()  # we'll use this to measure the rt


        [docs]def clearEvents(eventType=None):
            """Clears all events currently in the event buffer.

            Optional argument, eventType, specifies only certain types to be
            cleared.

            :Parameters:
                eventType : **None**, 'mouse', 'joystick', 'keyboard'
                    If this is not None then only events of the given type are cleared

            """
            if not havePygame or not display.get_init():  # pyglet
                # For each window, dispatch its events before
                # checking event buffer.
                if havePyglet:
                    for win in pyglet.app.windows:
                        win.dispatch_events()  # pump events on pyglet windows

                if haveGLFW:
                    glfw.poll_events()

                if eventType == 'mouse':
                    pass
                elif eventType == 'joystick':
                    pass
                else:  # eventType='keyboard' or eventType=None.
                    global _keyBuffer
                    _keyBuffer = []
            else:  # pygame
                if eventType == 'mouse':
                    evt.get([locals.MOUSEMOTION, locals.MOUSEBUTTONUP,
                             locals.MOUSEBUTTONDOWN])
                elif eventType == 'keyboard':
                    evt.get([locals.KEYDOWN, locals.KEYUP])
                elif eventType == 'joystick':
                    evt.get([locals.JOYAXISMOTION, locals.JOYBALLMOTION,
                             locals.JOYHATMOTION, locals.JOYBUTTONUP,
                             locals.JOYBUTTONDOWN])
                else:
                    evt.get()


        class _GlobalEventKeys(MutableMapping):
            """
             Global event keys for the pyglet backend.

             Global event keys are single keys (or combinations of a single key
             and one or more "modifier" keys such as Ctrl, Alt, etc.) with an
             associated Python callback function. This function will be executed
             if the key (or key/modifiers combination) was pressed.

             PsychoPy fully automatically monitors and processes key presses
             during most portions of the experimental run, for example during
             `core.wait()` periods, or when calling `win.flip()`. If a global
             event key press is detected, the specified function will be run
             immediately. You are not required to manually poll and check for key
             presses. This can be particularly useful to implement a global
             "shutdown" key, or to trigger laboratory equipment on a key press
             when testing your experimental script -- without cluttering the code.
             But of course the application is not limited to these two scenarios.
             In fact, you can associate any Python function with a global event key.

             The PsychoPy preferences for `shutdownKey` and `shutdownKeyModifiers`
             (both unset by default) will be used to automatically create a global
             shutdown key once the `psychopy.event` module is being imported.

             :Notes:

             All keyboard -> event associations are stored in the `self._events`
             OrderedDict. The dictionary keys are namedtuples with the elements
             `key` and `mofifiers`. `key` is a string defining an (ordinary)
             keyboard key, and `modifiers` is a tuple of modifier key strings,
             e.g., `('ctrl', 'alt')`. The user does not access this attribute
             directly, but should index the class instance itself (via
             `globalKeys[key, modifiers]`). That way, the `modifiers` sequence
             will be transparently converted into a tuple (which is a hashable
             type) before trying to index `self._events`.

             """
            _GlobalEvent = namedtuple(
                '_GlobalEvent',
                ['func', 'func_args', 'func_kwargs', 'name'])

            _IndexKey = namedtuple('_IndexKey', ['key', 'modifiers'])

            _valid_keys = set(string.ascii_lowercase + string.digits
                              + string.punctuation + ' \t')
            _valid_keys.update(['escape', 'left', 'right', 'up', 'down', 'space'])

            _valid_modifiers = {'shift', 'ctrl', 'alt', 'capslock',
                                'scrolllock', 'command', 'option', 'windows'}

            def __init__(self):
                super(_GlobalEventKeys, self).__init__()
                self._events = OrderedDict()

                if prefs.general['shutdownKey']:
                    msg = ('Found shutdown key definition in preferences; '
                           'enabling shutdown key.')
                    logging.info(msg)
                    self.add(key=prefs.general['shutdownKey'],
                             modifiers=prefs.general['shutdownKeyModifiers'],
                             func=psychopy.core.quit,
                             name='shutdown (auto-created from prefs)')

            def __repr__(self):
                info = ''
                for index_key, event in list(self._events.items()):
                    info += '\n\t'
                    if index_key.modifiers:
                        _modifiers = ['[%s]' % m.upper() for m in index_key.modifiers]
                        info += '%s + ' % ' + '.join(_modifiers)
                    info += ("[%s] -> '%s' %s"
                             % (index_key.key.upper(), event.name, event.func))

                return '<_GlobalEventKeys : %s\n>' % info

            def __str__(self):
                return ('<_GlobalEventKeys : %i key->event mappings defined.>'
                        % len(self))

            def __len__(self):
                return len(self._events)

            def __getitem__(self, key):
                index_key = self._gen_index_key(key)
                return self._events[index_key]

            def __setitem__(self, key, value):
                msg = 'Please use `.add()` to add a new global event key.'
                raise NotImplementedError(msg)

            def __delitem__(self, key):
                index_key = self._gen_index_key(key)
                event = self._events.pop(index_key, None)

                if event is None:
                    msg = 'Requested to remove unregistered global event key.'
                    raise KeyError(msg)
                else:
                    logging.exp("Removed global key event: '%s'." % event.name)

            def __iter__(self):
                return iter(self._events.keys())

            def _gen_index_key(self, key):
                if isinstance(key, str):  # Single key, passed as a string.
                    index_key = self._IndexKey(key, ())
                else:  # Convert modifiers into a hashable type.
                    index_key = self._IndexKey(key[0], tuple(key[1]))

                return index_key

            def add(self, key, func, func_args=(), func_kwargs=None,
                    modifiers=(), name=None):
                """
                Add a global event key.

                :Parameters:

                key : string
                    The key to add.

                func : function
                    The function to invoke once the specified keys were pressed.

                func_args : iterable
                    Positional arguments to be passed to the specified function.

                func_kwargs : dict
                    Keyword arguments to be passed to the specified function.

                modifiers : collection of strings
                    Modifier keys. Valid keys are:
                    'shift', 'ctrl', 'alt' (not on macOS), 'capslock',
                    'scrolllock', 'command' (macOS only), 'option' (macOS only)

                    Num Lock is not supported.

                name : string
                    The name of the event. Will be used for logging. If None,
                    will use the name of the specified function.

                :Raises:

                ValueError
                    If the specified key or modifiers are invalid, or if the
                    key / modifier combination has already been assigned to a global
                    event.

                """
                if key not in self._valid_keys:
                    raise ValueError('Unknown key specified: %s' % key)

                if not set(modifiers).issubset(self._valid_modifiers):
                    raise ValueError('Unknown modifier key specified.')

                index_key = self._gen_index_key((key, modifiers))
                if index_key in self._events:
                    msg = ('The specified key is already assigned to a global event. '
                           'Use `.remove()` to remove it first.')
                    raise ValueError(msg)

                if func_kwargs is None:
                    func_kwargs = {}
                if name is None:
                    name = func.__name__

                self._events[index_key] = self._GlobalEvent(func, func_args,
                                                            func_kwargs, name)
                logging.exp('Added new global key event: %s' % name)

            def remove(self, key, modifiers=()):
                """
                Remove a global event key.

                :Parameters:

                key : string
                    A single key name. If `'all'`, remove all event keys.

                modifiers : collection of strings
                    Modifier keys. Valid keys are:
                    'shift', 'ctrl', 'alt' (not on macOS), 'capslock', 'numlock',
                    'scrolllock', 'command' (macOS only), 'option' (macOS only),
                    'windows' (Windows only)

                """
                if key == 'all':
                    self._events = OrderedDict()
                    logging.exp('Removed all global key events.')
                    return

                del self[key, modifiers]


        def _onGLFWKey(*args, **kwargs):
            """Callback for key/character events for the GLFW backend.

            :return:
            """
            keyTime = psychopy.core.getTime()  # get timestamp

            # TODO - support for key emulation
            win_ptr, key, scancode, action, modifiers = args

            # only send events for PRESS and REPEAT to match pyglet behavior
            if action == glfw.RELEASE:
                return

            global useText

            if key == glfw.KEY_UNKNOWN:
                useText = True
                return
            useText = False

            # get the printable name, always make lowercase
            key_name = glfw.get_key_name(key, scancode)

            # if there is no localized key name or space
            if key_name is None or key_name == ' ':
                try:
                    key_name = _glfw_keycodes_[key]
                except KeyError:
                    pass
            else:
                key_name = key_name.lower()

            # TODO - modifier integration
            keySource = 'Keypress'
            _keyBuffer.append((key_name, modifiers, keyTime))  # tuple
            logging.data("%s: %s" % (keySource, key_name))


        def _onGLFWText(*args, **kwargs):
            """Handle unicode character events if _onGLFWKey() cannot.

            :return:
            """
            keyTime = psychopy.core.getTime()  # get timestamp



            # TODO - support for key emulation
            win_ptr, codepoint, modifiers = args
            # win = glfw.get_window_user_pointer(win_ptr)
            text = chr(codepoint)  # convert to unicode character (Python 3.0)
            global useText
            if not useText:  # _onPygletKey has handled the input
                return
            keySource = 'KeyPress'
            _keyBuffer.append((text, keyTime))
            logging.data("%s: %s" % (keySource, text))


        def _onGLFWMouseButton(*args, **kwargs):
            """Callback for mouse press events. Both press and release actions are
            handled by this function as they both invoke the same callback.

            """
            global mouseButtons, mouseClick, mouseTimes
            now = psychopy.core.getTime()
            win_ptr, button, action, modifier = args
            # win = glfw.get_window_user_pointer(win_ptr)

            # get current position of the mouse
            # this might not be at the exact location of the mouse press
            x, y = glfw.get_cursor_pos(win_ptr)

            # process actions
            if action == glfw.PRESS:
                if button == glfw.MOUSE_BUTTON_LEFT:
                    mouseButtons[0] = 1
                    mouseTimes[0] = now - mouseClick[0].getLastResetTime()
                elif button == glfw.MOUSE_BUTTON_MIDDLE:
                    mouseButtons[1] = 1
                    mouseTimes[1] = now - mouseClick[1].getLastResetTime()
                elif button == glfw.MOUSE_BUTTON_RIGHT:
                    mouseButtons[2] = 1
                    mouseTimes[2] = now - mouseClick[2].getLastResetTime()
            elif action == glfw.RELEASE:
                if button == glfw.MOUSE_BUTTON_LEFT:
                    mouseButtons[0] = 0
                elif button == glfw.MOUSE_BUTTON_MIDDLE:
                    mouseButtons[1] = 0
                elif button == glfw.MOUSE_BUTTON_RIGHT:
                    mouseButtons[2] = 0


        def _onGLFWMouseScroll(*args, **kwargs):
            """Callback for mouse scrolling events. For most computer mice with scroll
            wheels, only the vertical (Y-offset) is relevant.

            """
            window_ptr, x_offset, y_offset = args
            global mouseWheelRel
            mouseWheelRel = mouseWheelRel + numpy.array([x_offset, y_offset])
            msg = "Mouse: wheel shift=(%i,%i)"
            logging.data(msg % (x_offset, y_offset))


        def _getGLFWJoystickButtons(*args, **kwargs):
            """
            :return:
            """
            pass


        def _getGLFWJoystickAxes(*args, **kwargs):
            """
            :return:
            """
            pass


        if havePyglet:
            globalKeys = _GlobalEventKeys()

        '''
    CodeComponent loadImages
      Code Type = Py
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      Begin Experiment:
        #imageFilePath
        imageFilePath ="C:/Users/cocon/OneDrive/Documents/GitHub/psychedeLightsExpCode/"#'C:/Users/ipmmz/Desktop/psychedeLights_psychopy/'#
  Routine ITI
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    CodeComponent elRecord_iti
      Code Type = Auto->JS
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      Begin Routine:
        aaa = core.monotonicClock.getTime
        thisExp.addData('itiStart',str(aaa()))
        this_epoch = 'ITI'

        if eyetracking == 1:
            el_tracker.sendMessage('ITI')
      End Routine:
        aaa = core.monotonicClock.getTime
        thisExp.addData('itiEnd',str(aaa()))
        if eyetracking == 1:

            el_tracker.sendMessage('trialEnd')
            el_tracker.sendMessage('!V TRIAL_VAR TRIALID %s'% str(trlId))
            el_tracker.stopRecording()
    CodeComponent resets
      Code Type = Py
      Begin Routine:
        #add 1 to total trl count
        trlCntTotal +=1
        trlCntThisBlk +=1

        clock.reset()
        kb.clock.reset()
        kb.clearEvents()
      Each Frame:
        continuing = True
        while clock.getTime() <= itiT:
            key = kb.getKeys([ 'escape'], waitRelease=False)
            if 'escape' in key:
                  core.quit()
      End Routine:
        clock.reset()
        kb.clock.reset()
        kb.clearEvents()
  Routine trlInit
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    CodeComponent initTrlParams
      Code Type = Py
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      Begin Routine:
        """create trial id"""
        trlId = (expInfo['participant'],trlCntThisBlk,expBlk.thisN)

        """cue related params"""
        cueCircColor.fillColor = cueColDefault

        """distractor related params"""
        distractorType = None
        distractorCtrl = 1 #default add distractor
        visualDistractor.opacity = 0
        categoricalDistractor.setOpacity(0)
        if distractorArr[trlCntTotal] == 0: #no distactor
            distractorCtrl = 0
            distractorType = (False,'noDistractor',None)
        elif distractorArr[trlCntTotal] == 1: #visual
            visualDistractor.setImage(distractorPath[trlCntTotal])
            visualDistractor.opacity = 1
            distractorType = (True,'visual',distractorPath[trlCntTotal].split(os.sep)[-1])
        else: #categorical
            categoricalDistractor.text = distractorPath[trlCntTotal]
            categoricalDistractor.setOpacity(1)
            distractorType = (True,'categorical',distractorPath[trlCntTotal])

        """probe related params"""
        np.random.shuffle(probePosArr)
        #set the probe images this trial
        if trlType[trlCntTotal] == 0: #if visual trial, set visual probe
            trlTypeThis = 'visual'
            cueCorThis = cueColArr[0]

            #the following params are used for indexing
            a = trlCntTotal*sum(relatedProbeNum)
            b = trlCntTotal*sum(relatedProbeNum)+sum(relatedProbeNum)

            #grab the position params for different probes.
            corrPos = probePosArr[0]
            distractorPos = probePosArr[1]
            relPos = probePosArr[2:2+sum(relatedProbeNum)]
            distractorRelPos = probePosArr[2+sum(relatedProbeNum):2+sum(relatedProbeNum)+sum(relatedProbeNum)]

            #get all probe items
            corrProbeArr.setImage(corrProbePath[trlCntTotal])
            distractorProbeArr.setImage(distractorProbePath[trlCntTotal])
            clickables = [corrProbeArr,distractorProbeArr]

            #set position
            corrProbeArr.setPos(corrPos)
            distractorProbeArr.setPos(distractorPos)

            for n,(i,p) in enumerate(zip(relProbePath[a:b],relPos)):
                relProbeArr[n].setImage(i)
                clickables.append(relProbeArr[n])
                relProbeArr[n].setPos(p)
            for n,(i,p) in enumerate(zip(distractorRelProbePath[a:b],distractorRelPos)):
                distractorRelProbeArr[n].setImage(i)
                clickables.append(distractorRelProbeArr[n])
                distractorRelProbeArr[n].setPos(p)
            for i in clickables:
                i.size = i.size*visualProbeSizeScalar
        else: #if categorical trial, set categorical probe
            trlTypeThis = 'categorical'
            cueCorThis = cueColArr[1]

            #the following params are used for indexing
            a = trlCntTotal*5
            b = trlCntTotal*5+5

            corrPos = probePosArr[0]
            incorrPos = probePosArr[1:]

            #get all probe items
            corrCatProbeArr.setImage(corrCatProbePath[trlCntTotal])
            corrCatProbeArr.setPos(corrPos)
            clickables = [corrCatProbeArr]

            for n,(i,p) in enumerate(zip(incorrCatProbePath[a:b],incorrPos)):
                incorrCatProbeArr[n].setImage(i)
                clickables.append(incorrCatProbeArr[n])
                incorrCatProbeArr[n].setPos(p)
            for i in clickables:
                i.size = i.size/visualProbeSizeScalar
        clickables = np.asarray(clickables)
      End Routine:
        thisExp.addData('TRIALID',trlId)
        thisExp.addData('trlType',trlTypeThis)
        thisExp.addData('distractor',distractorType)
  Routine retrocue
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    CodeComponent drawRetrocue
      Code Type = Py
      Begin Routine:
        retrocueMask.ori = cueArr[trlCntTotal]

        cueCircColor.colorSpace='rgb255'
        cueCircColor.color = cueCorThis
        cueCircColor.setAutoDraw(True)
        retrocueMask.setAutoDraw(True) #draw retrocue


        clock.reset()
        kb.clock.reset()
        kb.clearEvents()

        win.flip()
      Each Frame:
        continuing = True
        while clock.getTime() <= retrocueT:
            key = kb.getKeys(['space', 'escape'], waitRelease=False)
            if 'escape' in key:
                  core.quit()
      End Routine:
        cueCircColor.setAutoDraw(False)
        retrocueMask.setAutoDraw(False)

        thisExp.addData('cueDirection',cueArrLabel[trlCntTotal])
        thisExp.addData('cuedItem',cuedImageBri[trlCntTotal])
    CodeComponent elRecord_retrocue
      Code Type = Py
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      Begin Routine:
        this_epoch = 'retrocue'
        aaa = core.monotonicClock.getTime
        thisExp.addData(this_epoch+'Start',str(aaa()))

        if eyetracking == 1:
            #el_tracker.startRecording(1, 1, 1, 1)
            el_tracker.sendMessage(this_epoch)
      End Routine:
        aaa = core.monotonicClock.getTime
        thisExp.addData(this_epoch+'End',str(aaa()))
  Routine blkInit
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    CodeComponent initBlkParams
      Code Type = Py
      Begin Routine:
        trlCntThisBlk = 0
  Routine IBI
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = you've reached the end of this block, press space when you're ready to continue
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    KeyboardComponent ibiSpace
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine delay
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    CodeComponent delayCode
      Code Type = Py
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      Begin Routine:
        cueCircColor.setAutoDraw(True)
        fixCircMask.setAutoDraw(True)
        noisePatchRight.setAutoDraw(False)
        noisePatchLeft.setAutoDraw(False)

        clock.reset()
        kb.clearEvents()

        win.flip()
      Each Frame:
        continuing = True
        while clock.getTime() <= noDistractorDelayT:

            key = kb.getKeys(['escape'], waitRelease=False)
            if 'escape' in key:
                core.quit()

        cueCircColor.setAutoDraw(False)
        fixCircMask.setAutoDraw(False)


        while (clock.getTime() >= noDistractorDelayT) & (distractorCtrl == 1) & (clock.getTime() < noDistractorDelayT + distractorT):
            visualDistractor.setAutoDraw(True)
            categoricalDistractor.setAutoDraw(True)
            win.flip()

        cueCircColor.setAutoDraw(True)
        fixCircMask.setAutoDraw(True)
        visualDistractor.setAutoDraw(False)
        categoricalDistractor.setAutoDraw(False)
        win.flip()

        while (clock.getTime() < delayT):
            pass
      End Routine:
        noisePatchRight.setAutoDraw(False)
        noisePatchLeft.setAutoDraw(False)

        fixCircMask.setAutoDraw(False)
        cueCircColor.setAutoDraw(False)

        win.flip()
    CodeComponent elRecord_delay
      Code Type = Py
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      Begin Routine:
        this_epoch = 'delay'
        aaa = core.monotonicClock.getTime
        thisExp.addData(this_epoch+'Start',str(aaa()))

        if eyetracking == 1:
            #el_tracker.startRecording(1, 1, 1, 1)
            el_tracker.sendMessage(this_epoch)
      End Routine:
        aaa = core.monotonicClock.getTime
        thisExp.addData(this_epoch+'End',str(aaa()))
  Routine preCueRest
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    CodeComponent drawNoise
      Code Type = Py
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      Begin Routine:
        noisePatchRight.setAutoDraw(True)
        noisePatchLeft.setAutoDraw(True)

        clock.reset()
        kb.clearEvents()

        win.flip()
      Each Frame:
        continuing = True
        while clock.getTime() <= noisePatchT:
            key = kb.getKeys(['escape'], waitRelease=False)
            if 'escape' in key:
                  core.quit()
        noisePatchRight.setAutoDraw(False)
        noisePatchLeft.setAutoDraw(False)
        win.flip()

        while clock.getTime() <= preCueRestT:
            pass
      End Routine:
        cueCircColor.setAutoDraw(False)
        fixCircMask.setAutoDraw(False)
    CodeComponent elRecord_preCue
      Code Type = Py
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      Begin Routine:
        this_epoch = 'preCueRest'
        aaa = core.monotonicClock.getTime
        thisExp.addData(this_epoch+'Start',str(aaa()))

        if eyetracking == 1:
            #el_tracker.startRecording(1, 1, 1, 1)
            el_tracker.sendMessage(this_epoch)
      End Routine:
        aaa = core.monotonicClock.getTime
        thisExp.addData(this_epoch+'End',str(aaa()))
  Routine connectEL
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    CodeComponent connectTracker
      Code Type = Py
      Before Experiment:
        import platform
        from PIL import Image  # for preparing the Host backdrop image
        from string import ascii_letters
        import time

        # import eyelink libs
        import pylink
        from EyeLinkCoreGraphicsPsychoPy import EyeLinkCoreGraphicsPsychoPy
      Begin Experiment:
        # this is adapted from the SR research's eyelink tutorial code
        #parameters to change
        calib_style = 13 #9 for head fixed, 13 for remote
        samprate = 1000 #250, 500, 1000, or 2000
        calib_tar_size = 24 #size for the calibration target

        """change this"""
        width_param = 53.0
        distance_param =70.0


        #create a folder to store all edf files, call this folder 'results'
        edf_folder = 'C:/Users/yud070/Documents/elRaw'
        if not os.path.exists(edf_folder):
            os.makedirs(edf_folder)

        # We download EDF data file from the EyeLink Host PC to the local hard
        # drive at the end of each testing session, here we rename the EDF to
        # include session start date/time
        time_str = time.strftime("_%Y_%m_%d_%H_%M", time.localtime())
        session_identifier = str(expInfo['participant']) + time_str

        # create a folder for the current testing session in the "results" folder
        session_folder = os.path.join(edf_folder, session_identifier)
        if not os.path.exists(session_folder):
            os.makedirs(session_folder)


        #helper function for displaying text
        def clear_screen(win):
            """ clear up the PsychoPy window"""

            win.fillColor = genv.getBackgroundColor()
            win.flip()
        def show_msg(win, text, wait_for_keypress=True):
            """ Show task instructions on screen"""

            msg = visual.TextStim(win, text,
                                  color=genv.getForegroundColor(),
                                  wrapWidth=scn_width/2)
            clear_screen(win)
            msg.draw()
            win.flip()

            # wait indefinitely, terminates upon any key press
            if wait_for_keypress:
                event.waitKeys(keyList = ['space','escape'],maxWait = 60)
                clear_screen(win)

        #function to terminate task and retrieve the EDF data file from the host PC and
        #download to the display pc
        def terminate_task():
            el_tracker = pylink.getEYELINK()

            if el_tracker.isConnected():

                # Put tracker in Offline mode
                el_tracker.setOfflineMode()

                # Clear the Host PC screen and wait for 500 ms
                el_tracker.sendCommand('clear_screen 0')
                pylink.msecDelay(500)

                # Close the edf data file on the Host
                el_tracker.closeDataFile()

                # Show a file transfer message on the screen
                msg = 'EDF data is transferring from EyeLink Host PC...'
                show_msg(win, msg, wait_for_keypress=False)

                # Download the EDF data file from the Host PC to a local data folder
                # parameters: source_file_on_the_host, destination_file_on_local_drive
                local_edf = os.path.join(session_folder, session_identifier + '.EDF')
                try:
                    el_tracker.receiveDataFile(edf_file, local_edf)
                except RuntimeError as error:
                    print('ERROR:', error)

                # Close the link to the tracker.
                el_tracker.close()

            # close the PsychoPy window
            win.close()

            # quit PsychoPy
            core.quit()
            sys.exit()

        def abort_trial():
            """Ends recording """

            el_tracker = pylink.getEYELINK()

            # Stop recording
            if el_tracker.isRecording():
                # add 100 ms to catch final trial events
                pylink.pumpDelay(100)
                el_tracker.stopRecording()

            # clear the screen
            clear_screen(win)
            # Send a message to clear the Data Viewer screen
            bgcolor_RGB = (116, 116, 116)
            el_tracker.sendMessage('!V CLEAR %d %d %d' % bgcolor_RGB)

            # send a message to mark trial end
            el_tracker.sendMessage('TRIAL_RESULT %d' % pylink.TRIAL_ERROR)
      Begin Routine:
        # Step 1: Connect to the EyeLink Host PC
        host_ip = "100.1.1.1"
        if eyetracking == 1:
            try:
                el_tracker = pylink.EyeLink(host_ip)
            except RuntimeError as error:
                print('ERROR:', error)
                core.quit()
                sys.exit()

            # Step 2: Open an EDF data file on the Host PC
            edf_file = str(expInfo['participant']) + ".EDF"
            try:
                el_tracker.openDataFile(edf_file)
            except RuntimeError as err:
                print('ERROR:', err)
                # close the link if we have one open
                if el_tracker.isConnected():
                    el_tracker.close()
                core.quit()
                sys.exit()

            # Step 3: Configure the tracker
            # Put the tracker in offline mode before we change tracking parameters
            el_tracker.setOfflineMode()
            # File and Link data control
            # what eye events to save in the EDF file, include everything by default
            file_event_flags = 'LEFT,RIGHT,FIXATION,SACCADE,BLINK,MESSAGE,BUTTON,INPUT'
            file_sample_flags = 'LEFT,RIGHT,GAZE,GAZERES,HREF,RAW,PUPIL,AREA,HTARGET,STATUS,INPUT'
            # what eye events to make available over the link, include everything by default
            link_event_flags = 'LEFT,RIGHT,FIXATION,SACCADE,BLINK,BUTTON,FIXUPDATE,INPUT'
            link_sample_flags = 'LEFT,RIGHT,GAZE,GAZERES,AREA,HTARGET,STATUS,INPUT'
            el_tracker.sendCommand("file_event_filter = %s" % file_event_flags)
            el_tracker.sendCommand("file_sample_data = %s" % file_sample_flags)
            el_tracker.sendCommand("link_event_filter = %s" % link_event_flags)
            el_tracker.sendCommand("link_sample_data = %s" % link_sample_flags)
            #set calibration style
            el_tracker.sendCommand("calibration_type = HV%s" % str(calib_style))
            #set sampling rate
            el_tracker.sendCommand("sample_rate %s" % str(samprate))

            # Step 4: set up a graphics environment for calibration
            # get the native screen resolution used by PsychoPy
            scn_width, scn_height = win.size
            # resolution fix for Mac retina displays
            if 'Darwin' in platform.system():
                if use_retina:
                    scn_width = int(scn_width/2.0)
                    scn_height = int(scn_height/2.0)
            # Pass the display pixel coordinates (left, top, right, bottom) to the tracker
            el_coords = "screen_pixel_coords = 0 0 %d %d" % (scn_width - 1, scn_height - 1)
            el_tracker.sendCommand(el_coords)
            # Write a DISPLAY_COORDS message to the EDF file
            # Data Viewer needs this piece of info for proper visualization
            dv_coords = "DISPLAY_COORDS  0 0 %d %d" % (scn_width - 1, scn_height - 1)
            el_tracker.sendMessage(dv_coords)
            # Configure a graphics environment (genv) for tracker calibration
            genv = EyeLinkCoreGraphicsPsychoPy(el_tracker, win)
            # Set background and foreground colors for the calibration target
            # in PsychoPy, (-1, -1, -1)=black, (1, 1, 1)=white, (0, 0, 0)=mid-gray
            foreground_color = (-1, -1, -1)
            background_color = win.color
            genv.setCalibrationColors(foreground_color, background_color)
            genv.setTargetSize(calib_tar_size)
            # Request Pylink to use the PsychoPy window we opened above for calibration
            pylink.openGraphicsEx(genv)
            task_msg = 'Press <space>, then <enter> to start calibration'
            show_msg(win, task_msg)
            print('line69')

            try:
                el_tracker.doTrackerSetup()
            except RuntimeError as err:
                print('ERROR:', err)
                el_tracker.exitCalibration()
        else:
            continueRoutine = False
      End Routine:
        #dont record yet
        if eyetracking == 1:
            el_tracker.setOfflineMode()
        win.mouseVisible = True
  Routine terminateExp
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    CodeComponent closeEl
      Code Type = Auto->JS
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      Begin Routine:
        if eyetracking == 1:

            # Step 7: disconnect, download the EDF file, then terminate the task
            terminate_task()
  Routine categoryProbe
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    CodeComponent elRecord_probe_cat
      Code Type = Py
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      Begin Routine:
        this_epoch = 'probe'
        aaa = core.monotonicClock.getTime
        thisExp.addData(this_epoch+'Start',str(aaa()))

        if eyetracking == 1:
            el_tracker.sendMessage(this_epoch)
      End Routine:
        aaa = core.monotonicClock.getTime
        thisExp.addData(this_epoch+'End',str(aaa()))
    PolygonComponent transparentPlaceHolder_cat
      fillColor = 0.0000, 0.0000, 0.0000
      opacity = 0
      saveStartStop = False
      shape = triangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $probeT
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    CodeComponent drawProbe_cat
      Code Type = Py
      Begin Experiment:
        probeMouse = event.Mouse(newPos = (0,0))
      Begin Routine:
        mouseIsDown = False

        #record continuous mouse activity
        probeMouse.x = []
        probeMouse.y = []
        probeMouse.leftButton = []
        probeMouse.midButton = []
        probeMouse.rightButton = []
        probeMouse.time = []
        probeMouse.clickOn = []

        #other mouse related variables
        eachClickTime = []
        eachClickItem = []

        #the following params are used for indexing
        a = trlCntTotal*sum(relatedProbeNum)
        b = trlCntTotal*sum(relatedProbeNum)+sum(relatedProbeNum)
        #c = trlCntTotal*sum(unreledProbeNum)
        #d = trlCntTotal*sum(unreledProbeNum)+2

        #grab the position params for different probes.
        corrPos = probePosArr[0]
        distractorPos = probePosArr[1]
        relPos = probePosArr[2:2+sum(relatedProbeNum)]
        distractorRelPos = probePosArr[2+sum(relatedProbeNum):2+sum(relatedProbeNum)+sum(relatedProbeNum)]
        #unrelPos = probePosArr[2+sum(relatedProbeNum):2+sum(relatedProbeNum)+sum(unreledProbeNum)]

        #get all probe items
        clickables = [corrProbeArr[trlCntTotal],distractorProbeArr[trlCntTotal]]

        #set position
        corrProbeArr[trlCntTotal].setPos(corrPos)
        distractorProbeArr[trlCntTotal].setPos(distractorPos)
        for i,p in zip(relProbeArr[a:b],relPos):
            clickables.append(i)
            i.setPos(p)
            i.setAutoDraw(True)
        for i,p in zip(distractorRelProbeArr[a:b],distractorRelPos):
            clickables.append(i)
            i.setPos(p)
            i.setAutoDraw(True)

        """
        for i,p in zip(unrelProbeArr[c:d],unrelPos):
            clickables.append(i)
            i.setPos(p)
            i.setAutoDraw(True)
        """
        clickables = np.asarray(clickables)
        clicksTotal = np.zeros(len(clickables))
        clickOnClickable = np.zeros(len(clickables))

        #prepare to draw
        corrProbeArr[trlCntTotal].setAutoDraw(True)
        distractorProbeArr[trlCntTotal].setAutoDraw(True)

        #resets
        clock.reset()
        kb.clearEvents()
        probeMouse.clickReset(buttons=(0, 1, 2))
        event.clearEvents('mouse')
        probeMouse.mouseClock.reset()

        #set mouse starting position
        probeMouse.setPos((0,0))
        probeMouse.setVisible(1)

        win.flip()
      Each Frame:
        x, y = probeMouse.getPos()
        probeMouse.x.append(x)
        probeMouse.y.append(y)
        buttons = probeMouse.getPressed()

        probeMouse.leftButton.append(buttons[0])
        probeMouse.midButton.append(buttons[1])
        probeMouse.rightButton.append(buttons[2])
        probeMouse.time.append(probeMouse.mouseClock.getTime())

        hoverOnClickable = np.asarray([i.contains(probeMouse) for i in clickables])
        probeMouse.clickOn.append(hoverOnClickable)


        key = kb.getKeys(['space', 'escape'], waitRelease=False)
        if 'space' in key:
            continueRoutine  = False
        if 'escape' in key:
            core.quit()
        #check for mouse press
        if sum(buttons) and mouseIsDown == False and sum(hoverOnClickable):
            clickOnClickable = np.where(hoverOnClickable,1,0)

            eachClickTime.append(probeMouse.mouseClock.getTime())
            eachClickItem.append(clickableLabel[np.where(clickOnClickable == 1)[0]][0])
            #mouse is pressing right now
            mouseIsDown = True
        #check for mouse release
        if sum(buttons) == 0 and mouseIsDown:
            #mouse released
            clicksTotal += clickOnClickable

            #change opacity
            clicking = clickables[clickOnClickable ==1][0]

            #set opacity
            for n,i in enumerate(clickables):
                i.opacity = 1
            clicking.opacity = 0.25

            mouseIsDown = False
      End Routine:
        corrProbeArr[trlCntTotal].setAutoDraw(False)
        distractorProbeArr[trlCntTotal].setAutoDraw(False)

        for i,p in zip(relProbeArr[a:b],relPos):
            i.setAutoDraw(False)

        for i,p in zip(distractorRelProbeArr[a:b],distractorRelPos):
            i.setAutoDraw(False)
        """
        for i,p in zip(unrelProbeArr[a:b],unrelPos):
            i.setAutoDraw(False)
        """
        win.flip()
        kb.clearEvents()

        probeMouse.setVisible(0)

        #

        #add mouse activity
        trials.addData('probeMouse.x', probeMouse.x)
        trials.addData('probeMouse.y', probeMouse.y)
        trials.addData('probeMouse.leftButton', probeMouse.leftButton)
        trials.addData('probeMouse.midButton', probeMouse.midButton)
        trials.addData('probeMouse.rightButton', probeMouse.rightButton)
        trials.addData('probeMouse.time', probeMouse.time)
        trials.addData('probeMouse.mouseOnProbes', probeMouse.clickOn)

        #add data about probe information
        for label,path in zip(clickableLabel,clickables):
            thisExp.addData(label,path._imName)

        #record position for each probe item
        thisExp.addData('probeLocationArr',probePosArr)
        #record the final response
        thisExp.addData('rspIndex',clickOnClickable)
        thisExp.addData('rsp',clickableLabel[np.where(clickOnClickable == 1)[0]][0])
        thisExp.addData('rspPath',clickables[np.where(clickOnClickable == 1)[0]][0]._imName)

        #record RT
        thisExp.addData('rt',eachClickTime[0])
        thisExp.addData('timeEachClick', eachClickTime)
        thisExp.addData('itemEachClick', eachClickItem)
  Routine probe
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    CodeComponent elRecord_probe
      Code Type = Py
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      Begin Routine:
        this_epoch = 'probe'
        aaa = core.monotonicClock.getTime
        thisExp.addData(this_epoch+'Start',str(aaa()))

        if eyetracking == 1:
            el_tracker.sendMessage(this_epoch)
      End Routine:
        aaa = core.monotonicClock.getTime
        thisExp.addData(this_epoch+'End',str(aaa()))
    PolygonComponent transparentPlaceHolder
      fillColor = 0.0000, 0.0000, 0.0000
      opacity = 0
      saveStartStop = False
      shape = triangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $probeT
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    CodeComponent drawProbe
      Code Type = Py
      Begin Experiment:
        probeMouse = event.Mouse(newPos = (0,0))
      Begin Routine:
        mouseIsDown = False

        #record continuous mouse activity
        probeMouse.x = []
        probeMouse.y = []
        probeMouse.leftButton = []
        probeMouse.midButton = []
        probeMouse.rightButton = []
        probeMouse.time = []
        probeMouse.clickOn = []

        #other mouse related variables
        eachClickTime = []
        eachClickItem = []

        clicksTotal = np.zeros(len(clickables))
        clickOnClickable = np.zeros(len(clickables))

        #prepare to draw
        for i in clickables:
            i.setAutoDraw(True)

        #resets
        clock.reset()
        kb.clearEvents()
        probeMouse.clickReset(buttons=(0, 1, 2))
        event.clearEvents('mouse')
        probeMouse.mouseClock.reset()

        #set mouse starting position
        probeMouse.setPos((0,0))
        probeMouse.setVisible(1)

        win.flip()
      Each Frame:
        x, y = probeMouse.getPos()
        probeMouse.x.append(x)
        probeMouse.y.append(y)
        buttons = probeMouse.getPressed()

        probeMouse.leftButton.append(buttons[0])
        probeMouse.midButton.append(buttons[1])
        probeMouse.rightButton.append(buttons[2])
        probeMouse.time.append(probeMouse.mouseClock.getTime())

        hoverOnClickable = np.asarray([i.contains(probeMouse) for i in clickables])
        probeMouse.clickOn.append(hoverOnClickable)


        key = kb.getKeys(['space', 'escape'], waitRelease=False)
        if 'space' in key:
            continueRoutine  = False
        if 'escape' in key:
            core.quit()
        #check for mouse press
        if sum(buttons) and mouseIsDown == False and sum(hoverOnClickable):
            clickOnClickable = np.where(hoverOnClickable,1,0)

            eachClickTime.append(probeMouse.mouseClock.getTime())
            eachClickItem.append(clickableLabel[np.where(clickOnClickable == 1)[0]][0])
            #mouse is pressing right now
            mouseIsDown = True
        #check for mouse release
        if sum(buttons) == 0 and mouseIsDown:
            #mouse released
            clicksTotal += clickOnClickable

            #change opacity
            clicking = clickables[clickOnClickable ==1][0]

            #set opacity
            for n,i in enumerate(clickables):
                i.opacity = 1
            clicking.opacity = 0.25

            mouseIsDown = False
      End Routine:
        #undraw,reset opacity
        for i in clickables:
            i.setAutoDraw(False)
            i.opacity = 1
            if trlType[trlCntTotal] == 0:
                i.size = i.size/visualProbeSizeScalar
            else:
                i.size = i.size*visualProbeSizeScalar
        win.flip()

        #resets
        kb.clearEvents()
        probeMouse.setVisible(0)

        try:
            #add mouse activity
            trials.addData('probeMouse.x', probeMouse.x)
            trials.addData('probeMouse.y', probeMouse.y)
            trials.addData('probeMouse.leftButton', probeMouse.leftButton)
            trials.addData('probeMouse.midButton', probeMouse.midButton)
            trials.addData('probeMouse.rightButton', probeMouse.rightButton)
            trials.addData('probeMouse.time', probeMouse.time)
            trials.addData('probeMouse.mouseOnProbes', probeMouse.clickOn)

            #add data about probe information
            for label,path in zip(clickableLabel,clickables):
                thisExp.addData(label,path._imName)

            #record position for each probe item
            thisExp.addData('probeLocationArr',probePosArr)
            #record the final response
            thisExp.addData('rspIndex',clickOnClickable)
            thisExp.addData('rsp',clickableLabel[np.where(clickOnClickable == 1)[0]][0])
            thisExp.addData('rspPath',clickables[np.where(clickOnClickable == 1)[0]][0]._imName)

            #record RT
            thisExp.addData('rt',eachClickTime[0])
            thisExp.addData('timeEachClick', eachClickTime)
            thisExp.addData('itemEachClick', eachClickItem)
            thisExp.addData('missingRsp',False)
        except:
            thisExp.addData('missingRsp',True)
  Routine distractor
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    CodeComponent drawDistractor
      Code Type = Py
      Begin Routine:
        visualDistractor.setAutoDraw(True)
        categoricalDistractor.setAutoDraw(True)

        clock.reset()
        kb.clock.reset()
        kb.clearEvents()

        win.flip()
      Each Frame:
        continuing = True
        while clock.getTime() <= distractorT:
            key = kb.getKeys(['escape'], waitRelease=False)
            if 'escape' in key:
                  core.quit()
      End Routine:
        visualDistractor.setAutoDraw(False)
        categoricalDistractor.setAutoDraw(False)
        win.flip()
    CodeComponent elRecord_distractor
      Code Type = Py
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      Begin Routine:
        this_epoch = 'distractor'
        aaa = core.monotonicClock.getTime
        thisExp.addData(this_epoch+'Start',str(aaa()))

        if eyetracking == 1:
            #el_tracker.startRecording(1, 1, 1, 1)
            el_tracker.sendMessage(this_epoch)
      End Routine:
        aaa = core.monotonicClock.getTime
        thisExp.addData(this_epoch+'End',str(aaa()))
  Routine instr
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  Routine drift_check
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    CodeComponent drift_check_code
      Code Type = Py
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      Begin Routine:
        if eyetracking == 1:
            # drift-check and re-do camera setup if ESCAPE is pressed
            try:
                error = el_tracker.doDriftCorrect(int(scn_width/2.0),
                                                  int(scn_height/2.0), 1, 1)
                # break following a success drift-check
            except:
                continue
            # put tracker in idle/offline mode before recording
            el_tracker.setOfflineMode()
  Routine mouseWheel
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    ImageComponent image
      image = stimuli/Connie/cube/alphabetblock.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent code
      Code Type = Py
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      Before Experiment:
        from psychopy import visual, core, event
      Begin Experiment:
        win = visual.Window([800, 600], color='black')

        polygon = visual.Polygon(win, edges=6, size=(0.5, 0.5), fillColor='blue', lineColor='white')

        while True:
            # Get scroll input
            wheel = event.mouseWheelRel[1]

            if wheel > 0:
                new_size = polygon.size[0] + 0.1
                polygon.size = (new_size, new_size)
            elif wheel < 0:
                new_size = max(0.1, polygon.size[0] - 0.1)
                polygon.size = (new_size, new_size)

            polygon.draw()
            win.flip()

            # Close if escape key pressed
            if 'escape' in event.getKeys():
                break

            core.wait(0.01)

        win.close()
        core.quit()
Flow
  Routine mouseWheel
  Routine loadExpVar
